<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigValvesTo250msPulse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>41</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(E)ToogleValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>E</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(D)ToogleValve1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(R)PulseValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(F)PulseValve1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(Q)StartCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Q</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(W)StopCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>W</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(A)StartCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>2</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(S)StopCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigCamsTo500Hz</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>500</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>34</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>500</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>37</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>35</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM32</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lick0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>39</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>U8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lick1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>39</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>U8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OpticalFlowMeter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>46</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="14" Label="Source5" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="14" Label="Source3" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="14" Label="Source4" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source2" />
      <Edge From="13" To="14" Label="Source6" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>