<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ValvePulseTime" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialParameters</Name>
        <Description>CameraAcquiring - Has acquisition been started? Should not send camera configuration if currently acquiring</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>CameraAcquiring1</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraAcquiring1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>250</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="ValvePulseTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>500</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>41</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>500</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HardwareH1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Optical Flow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address>46</harp:Address>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Type>TimestampedS16</harp:Type>
                    <harp:IsArray>true</harp:IsArray>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FlowSensor1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>FlowSensorMapping</scr:Name>
                    <scr:Description />
                    <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FlowSensor1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FlowSensor2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>FlowSensorMapping</scr:Name>
                    <scr:Description />
                    <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FlowSensor2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Lick State</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address>39</harp:Address>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Type>TimestampedU8</harp:Type>
                    <harp:IsArray>false</harp:IsArray>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LickState1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>FilterLick1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseAnd">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>16</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>16</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickState1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LickState2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>FilterLick2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseAnd">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>32</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>32</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickState2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraEvents1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address>32</harp:Address>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Type>TimestampedU8</harp:Type>
                    <harp:IsArray>false</harp:IsArray>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="spk:SpinnakerCapture">
                  <spk:Index xsi:nil="true" />
                  <spk:SerialNumber>22085343</spk:SerialNumber>
                  <spk:ColorProcessing>Default</spk:ColorProcessing>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>Camera1</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartCamera1Key" />
        <Property Name="StopCamera2Key" />
        <Property Name="SetCamera1ConfigurationKey" />
        <Property Name="Cam1Hz" />
        <Property Name="ToggleValve1Key" />
        <Property Name="PulseValve1Key" />
        <Property Name="ToggleValve2Key" />
        <Property Name="PulseValve2Key" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CommandsH1</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartCamera1Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraAcquiring1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StopCamera2Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton D Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraAcquiring1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="SetCamera1ConfigurationKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel A B C Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>AcquisitonStopped</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraAcquiring1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Cam1Hz" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>34</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>35</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>500</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="ToggleValve1Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode A D E P Q T U Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="PulseValve1Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton Back Tab A H I Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="ToggleValve2Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton Back LineFeed B H J Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="PulseValve2Key" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel Back Tab LineFeed A B C H I J K Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FlowSensor1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>44</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedS16</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>distance-sequence-servo-output.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>distance-sequence.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FlowSensor2</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LickState1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LickState2</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="12" To="15" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>