<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Optical Flow</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>46</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlowSensor1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensorMapping</scr:Name>
              <scr:Description />
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlowSensor2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensorMapping</scr:Name>
              <scr:Description />
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lick State</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>39</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LickState1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>FilterLick1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>16</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>16</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickState1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LickState2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>FilterLick2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>32</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>32</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickState2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>