<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width>2048</Width>
        <Height>2048</Height>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>1.048</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-5</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>0.5</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>-1.048</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>5</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0.5</X>
        <Y>0</Y>
        <Width>0.5</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>36</NumberColumns>
        <NumberRows>18</NumberRows>
        <Phase>0</Phase>
        <ExtentX>360</ExtentX>
        <ExtentY>180</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
        <Duration>2</Duration>
        <RangeBegin>-90</RangeBegin>
        <RangeEnd>90</RangeEnd>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>25</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <SpatialFrequency>0.3</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
        <ExtentX>10</ExtentX>
        <ExtentY>10</ExtentY>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="17" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>