<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderTexture">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:Width xsi:nil="true" />
          <gl:Height xsi:nil="true" />
          <gl:InternalFormat>Rgba</gl:InternalFormat>
          <gl:WrapS>Repeat</gl:WrapS>
          <gl:WrapT>Repeat</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateCubemapCamera">
          <gl:Eye>
            <gl:X>0</gl:X>
            <gl:Y>0</gl:Y>
            <gl:Z>0</gl:Z>
          </gl:Eye>
          <gl:NearClip>0.1</gl:NearClip>
          <gl:FarClip>1000</gl:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
ViewMatrix as ViewMatrix,
ProjectionMatrix as ProjectionMatrix,
ViewMatrix.Row3.Yzw as Light)</scr:Expression>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli3D</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli3D</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>-0.6</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-2</TranslationZ>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>Plane</MeshName>
        <Ambient>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Ambient>
        <Diffuse>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>0.7</RotationY>
        <RotationX>0.808726847</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0.6</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-2</TranslationZ>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>Plane</MeshName>
        <Ambient>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Ambient>
        <Diffuse>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>-0.7</RotationY>
        <RotationX>0.808726847</RotationX>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <NumberColumns>3</NumberColumns>
        <NumberRows>3</NumberRows>
        <Phase>0</Phase>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>-30</Angle>
        <SpatialFrequency>10</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>