<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageSequence">
              <gl:Name>Video</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Images\frame%04d.jpg</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
        <TextureName>Video</TextureName>
        <PlaybackRate>10</PlaybackRate>
        <Loop>true</Loop>
        <Angle>0</Angle>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ShiftX>0</ShiftX>
        <ShiftY>0</ShiftY>
        <Layer>0</Layer>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>