<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>39</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>U8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Value Bit" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="TriggerBit" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>32</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>32</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BitwiseAnd">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="6" Label="Source2" />
      <Edge From="3" To="7" Label="Source2" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>