WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=5000, WriteSize=2048))

GroupWorkflow "Neuropixels V1e Device"(Description="Neuropixels V1e Device")
    ExternalizedMapping(EnableStream)
    -> Bonsai.ONIX.NeuropixelsV1eDevice => #1
      DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
      BlockSize=30
      EnableStream=true
      Configuration
        DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
        ConfigProbeSN=18005111741
        PerformReadCheck=false
        CalibrationFolderPath=C:\Users\open-ephys\public\Bonsai-Stuff\Bonsai.ONIX\ExampleWorkflows\NeuropixelsV1e\18005111741
        Mode=RECORD
        Channels
          NeuropixelsV1Channel
            Index=0
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=1
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=2
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=3
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
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          NeuropixelsV1Channel
            Index=42
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=true
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=43
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=44
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=45
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
          NeuropixelsV1Channel
            Index=46
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
              NeuropixelsV1GainCorrection
                APx50Correction=1.058378
                APx125Correction=1.058378
                APx250Correction=1.063019
                APx500Correction=1.033686
                APx1000Correction=1.049433
                APx1500Correction=1.049433
                APx2000Correction=1.049433
                APx3000Correction=1.049433
                LFPx50Correction=0.964578
                LFPx125Correction=0.964578
                LFPx250Correction=0.968135
                LFPx500Correction=0.93983
                LFPx1000Correction=0.955935
                LFPx1500Correction=0.955935
                LFPx2000Correction=0.955935
                LFPx3000Correction=0.955935
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        ADCs
          NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=513)
          NeuropixelsV1ADC(CompP=19, CompN=11, Slope=1, Coarse=2, Fine=2, Cfix=1, Offset=3, Threshold=513)
          NeuropixelsV1ADC(CompP=15, CompN=15, Slope=1, Coarse=1, Fine=1, Cfix=0, Offset=4, Threshold=514)
          NeuropixelsV1ADC(CompP=11, CompN=19, Slope=1, Coarse=1, Fine=1, Cfix=1, Offset=4, Threshold=514)
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      RequireSNMatch=false
    -> MemberSelector(Selector=FrameCounter)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=frame-counter_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=LFPClock)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=lfp-clock_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=LFPData)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=lfp_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=Clock)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=spike-clock_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=SpikeData) => #10
    -> Disable Bonsai.Dsp.MatrixWriter(Path=spike_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #10 -> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
    -> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=probe_image, TextureUniformName=uTexture)

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      Title="Spike Data"
      VSync=Off
      SwapSync=false
      ClearColor=Transparent
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=probe_image
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=probe_image.frag
    -> Bonsai.Resources.LoadResources

    Bonsai.ONIX.MemoryUsageDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10), EnableStream=true, UpdateHz=100)
    -> MemberSelector(Selector=MemoryUsagePercentage)

GroupWorkflow "Neuropixels BNO055 9-Axis IMU"(Description="Neuropixels BNO055 9-Axis IMU")
    Bonsai.ONIX.NeuropixelsV2eBNO055Device(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)) => #0
    -> MemberSelector(Selector=Quaternion) => #1
    -> GroupWorkflow Commutator
      Description="Drives ONIX Commutator from BNO055 Quaterion data. Pressing down/up keys will manually turn the commutator, overrding the BNO055 heading input.\n"
      Workflow
        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> StringProperty(Value='"{turn : 0.1}"') => #1
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> StringProperty(Value='"{turn : -0.1}"') => #3
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform Heading
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *
            from math import atan2
            @returns(float)
            def process(value):

              q0 = value[0].Val0;
              q1 = value[1].Val0;
              q2 = value[2].Val0;
              q3 = value[3].Val0;

              return atan2((2 * (q0 * q3 + q1 * q2)), (1 - 2 * (q2**2 + q3**2)))
        -> Disable Bonsai.IO.CsvWriter(FileName=heading_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #6
        Timer(DueTime=PT0S, Period=PT0.1S) => #7
        #6, #7 -> Sample => #8
        -> Skip(Count=1) => #9
        #8, #9 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform => #11
          Script:
            from math import pi

            @returns(str)
            def process(value):


              last = value.Item2

              curr = value.Item1
              a1 = curr + 2 * pi
              a2 = curr - 2 * pi
              pos = [curr, a1, a2]

              delta = [abs(x - last) for x in pos]

              p = pos[delta.index(min(delta))]

              turn = (p - last) / (2 * pi)

              return "{turn : %s}" % turn
        #1, #3, #11 -> Merge => #12
        ExternalizedMapping(PortName) => #13
        #12, #13 -> Bonsai.IO.Ports.SerialWriteLine(PortName=COM34, NewLine=\r\n)
        -> WorkflowOutput
    #1 -> Disable Bonsai.Dsp.MatrixWriter(Path=bno055-quaternion_.raw, Suffix=Timestamp, Overwrite=false, Layout=RowMajor)
    #0 -> MemberSelector(Selector=LinearAcceleration)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=bno055-linear-accel_.raw, Suffix=Timestamp, Overwrite=false, Layout=RowMajor)
    #0 -> MemberSelector(Selector=GravityVector)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=bno055-gravity-vector_.raw, Suffix=Timestamp, Overwrite=false, Layout=RowMajor)
    #0 -> MemberSelector(Selector=Euler)
    -> Disable Bonsai.Dsp.MatrixWriter(Path=bno055-euler_.raw, Suffix=Timestamp, Overwrite=false, Layout=RowMajor)
    #0 -> Timestamp
    -> Disable Bonsai.IO.CsvWriter
      FileName=bno055-timestamp_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
      Selector="Timestamp,Value.Temperature,Value.Calibration"
