WorkflowBuilder(Version=2.8.1)
Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=1, Bottom=0, Top=1) => #1
Bonsai.ONIX.NeuropixelsV1eDevice => #2
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
  BlockSize=5
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
    ConfigProbeSN=19454412862
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\ONIX\Desktop\19454412862
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
          NeuropixelsV1GainCorrection
            APx50Correction=1.034581
            APx125Correction=1.034581
            APx250Correction=1.04018
            APx500Correction=1.011732
            APx1000Correction=1.024202
            APx1500Correction=1.024202
            APx2000Correction=1.024202
            APx3000Correction=1.024202
            LFPx50Correction=0.97211
            LFPx125Correction=0.97211
            LFPx250Correction=0.976381
            LFPx500Correction=0.947643
            LFPx1000Correction=0.962096
            LFPx1500Correction=0.962096
            LFPx2000Correction=0.962096
            LFPx3000Correction=0.962096
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    ADCs
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=0, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=5, Coarse=0, Fine=0, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=2, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=5, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=1, Coarse=3, Fine=2, Cfix=1, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=16, CompN=14, Slope=3, Coarse=1, Fine=3, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=0, Fine=0, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=5, Coarse=0, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=1, Coarse=3, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=1, Coarse=3, Fine=3, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=1, Coarse=3, Fine=2, Cfix=0, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=12, CompN=18, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=3, Threshold=512)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=5, Coarse=0, Fine=2, Cfix=0, Offset=2, Threshold=511)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=1, Fine=0, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=0, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=3, Threshold=512)
  RequireSNMatch=true
-> MemberSelector(Selector=SpikeData) => #3
#1, #3 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=lfp_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=0.5)
#2 -> MemberSelector(Selector=LFPData) => #9
#1, #9 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=spike_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=1, Height=0.5)
#2 -> MemberSelector(Selector=FrameCounter)
-> Bonsai.Dsp.MatrixWriter(Path=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\framecounter, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#2 -> MemberSelector(Selector=LFPClock)
-> Bonsai.Dsp.MatrixWriter(Path=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\lfpclock, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#2 -> MemberSelector(Selector=Clock)
-> Bonsai.Dsp.MatrixWriter(Path=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\clock, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#3 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\spikedata, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#9 -> Bonsai.Dsp.MatrixWriter(Path=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\lfpdata, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#3 -> Disable Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3))
-> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=-512)
-> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=-1.1785, Shift=0)
-> Bonsai.Dsp.ConvertScale(Depth=U16, Scale=1, Shift=512)
-> Bonsai.JonsUtils.OpenCVMatUDPClient(addr=localhost, port=9001)

Bonsai.ONIX.HeadstagePortControlDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=2), EnableStream=true, LinkVoltage=5.5, GPO1=false)
-> Timestamp
-> Bonsai.IO.CsvWriter
  FileName=C:\Users\ONIX\source\nora-dev\vestibular-vr\analysis\NP1.0e_tests\headstageportcontrol_riffa02.csv
  Append=false
  Overwrite=false
  Suffix=FileCount
  IncludeHeader=true

Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=lfp_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=spike_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
-> Bonsai.Resources.LoadResources

Disable OpenEphys.Sockets.Bonsai.TcpServer(Name=tcp, Port=9001, Address=localhost)
