WorkflowBuilder(Version=2.8.1)
GroupWorkflow NewScaleControl
    BehaviorSubject<System.Boolean> MotorRunning

    BooleanProperty(Value=false)
    -> MulticastSubject MotorRunning

    PublishSubject<System.Double> TargetPosition

    SubscribeSubject TargetPosition
    -> NewScale.NstDevice => #5
      Axis=0
      IgnoreBonsaiCommands=true
      ZeroPosition=6886.5
      PositioningSpeed=2000
      PositioningAcceleration=10000
      PositioningCutoffSpeed=2000
      PositioningAbsoluteTarget=15000
      UpHotkey=Up
      DownHotkey=Down
      ControlSpeed=400
      ControlAcceleration=10000
      ControlCutoffSpeed=400
      ControlSteps=100
    -> MemberSelector(Selector=Position)
    -> MulticastSubject CurrentPosition
    #5 -> MemberSelector(Selector=MotorStatus) => #8
    -> HasFlag(Operand=WorkflowProperty<NewScale.MotorStatus>(Value=MotorRunning))
    -> MulticastSubject MotorRunning
    #8 -> HasFlag(Operand=WorkflowProperty<NewScale.MotorStatus>(Value=Stalled))
    #5 -> WorkflowOutput

    PublishSubject<System.Double> CurrentPosition

    Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> Disable DoubleProperty(Value=-500) => #15
    Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> Disable DoubleProperty(Value=500) => #17
    #15, #17 -> Disable Merge
    -> Disable Accumulate
    -> Disable MulticastSubject TargetPosition

ExternalizedMapping(SpikeChannelIndex, LfpChannelIndex)
-> GroupWorkflow "ONIX Control"
    Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=4096, WriteSize=2048))

    Bonsai.ONIX.NeuropixelsV1Device => #1
      DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
      EnableStream=true
      Configuration
        DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
        ConfigProbeSN=19454412891
        PerformReadCheck=true
        CalibrationFolderPath=C:\Users\Admin\Desktop\19454412891-20230913T100948Z-001\19454412891
        Mode=RECORD
        Channels
          NeuropixelsV1Channel
            Index=0
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
          NeuropixelsV1Channel
            Index=1
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
          NeuropixelsV1Channel
            Index=2
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
          NeuropixelsV1Channel
            Index=3
            Bank=ZERO
            APGain=x1000
            LFPGain=x50
            Standby=false
            APFilter=false
            Reference=EXTERNAL
            GainCorrectrions
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
              NeuropixelsV1GainCorrection
                APx50Correction=1.035817
                APx125Correction=1.035817
                APx250Correction=1.041123
                APx500Correction=1.010107
                APx1000Correction=1.01971
                APx1500Correction=1.01971
                APx2000Correction=1.01971
                APx3000Correction=1.01971
                LFPx50Correction=0.975021
                LFPx125Correction=0.975021
                LFPx250Correction=0.978522
                LFPx500Correction=0.950075
                LFPx1000Correction=0.964589
                LFPx1500Correction=0.964589
                LFPx2000Correction=0.964589
                LFPx3000Correction=0.964589
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        ADCs
          NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=513)
          NeuropixelsV1ADC(CompP=11, CompN=19, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
          NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=4, Threshold=514)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=514)
          NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=8, Offset=1, Threshold=512)
          NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=512)
          NeuropixelsV1ADC(CompP=8, CompN=22, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=27, CompN=3, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=513)
          NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=1, Threshold=514)
          NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=0, Cfix=1, Offset=3, Threshold=514)
          NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=513)
          NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=513)
          NeuropixelsV1ADC(CompP=10, CompN=20, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=512)
          NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=512)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
          NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
          NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=512)
          NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=1, Threshold=512)
          NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
          NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=15, CompN=15, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
          NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=0, Offset=3, Threshold=514)
          NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=2, Threshold=513)
          NeuropixelsV1ADC(CompP=11, CompN=19, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
      RequireSNMatch=false
      BlockSize=2
    -> MemberSelector(Selector=SpikeData)
    -> PublishSubject SpikeData
    #1 -> MemberSelector(Selector=LFPData)
    -> PublishSubject LFPData
    SubscribeSubject CurrentPosition => #6
    #1 -> MemberSelector(Selector=Clock)
    -> PublishSubject Clock
    -> Index(Operand=IntProperty(Value=0)) => #9
    #6, #9 -> WithLatestFrom
    -> PublishSubject TimestampedCurrentPosition
    #1 -> MemberSelector(Selector=FrameCounter)
    -> PublishSubject FrameCounter

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      Title="Spike Data"
      VSync=Off
      SwapSync=false
      ClearColor=Transparent
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=lfp_material
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=probe_image.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=spike_material
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=quad.vert
          FragmentShader=probe_image.frag
    -> Bonsai.Resources.LoadResources

    Bonsai.ONIX.MemoryUsageDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10), EnableStream=true, UpdateHz=100)
    -> MemberSelector(Selector=MemoryUsagePercentage)

    BehaviorSubject<OpenCV.Net.Mat> AnalogOutput
    -> Bonsai.ONIX.AnalogIODevice
      DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
      BlockSize=240
      DataType=Volts
      EnableStream=true
      InputRange00=TenVolts
      InputRange01=TenVolts
      InputRange02=TenVolts
      InputRange03=TenVolts
      InputRange04=TenVolts
      InputRange05=TenVolts
      InputRange06=TenVolts
      InputRange07=TenVolts
      InputRange08=TenVolts
      InputRange09=TenVolts
      InputRange10=TenVolts
      InputRange11=TenVolts
      Direction00=Output
      Direction01=Output
      Direction02=Input
      Direction03=Input
      Direction04=Input
      Direction05=Input
      Direction06=Input
      Direction07=Input
      Direction08=Input
      Direction09=Input
      Direction10=Input
      Direction11=Input
    -> MemberSelector(Selector=Data)

    SubscribeSubject SpikeData => #23
    ExternalizedMapping(ChannelIndex(DisplayName=SpikeChannelIndex)) => #24
    #23, #24 -> GroupWorkflow SelectChannel
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=ChannelIndex))
        -> PropertySource<Bonsai.Dsp.Submatrix,System.Int32>(MemberName=StartRow, Value=201) => #2
        -> PropertyMapping(StartRow) => #3
        #2 -> Add(Operand=IntProperty(Value=1))
        -> PropertyMapping(EndRow) => #5
        #0, #3, #5 -> Bonsai.Dsp.Submatrix(StartRow=201, EndRow=202, StartCol=0, EndCol=1)
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=0, Max=1023, RangeMin=-0.6, RangeMax=0.6, RescaleType=Linear)
    -> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=0) => #27
    SubscribeSubject LFPData => #28
    ExternalizedMapping(ChannelIndex(DisplayName=LfpChannelIndex)) => #29
    #28, #29 -> GroupWorkflow SelectChannel
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=ChannelIndex))
        -> PropertySource<Bonsai.Dsp.Submatrix,System.Int32>(MemberName=StartRow, Value=2) => #2
        -> PropertyMapping(StartRow) => #3
        #2 -> Add(Operand=IntProperty(Value=1))
        -> PropertyMapping(EndRow) => #5
        #0, #3, #5 -> Bonsai.Dsp.Submatrix(StartRow=2, EndRow=3, StartCol=0, EndCol=1)
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=0, Max=1023, RangeMin=-12, RangeMax=12, RescaleType=Linear)
    -> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=0) => #32
    #27, #32 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=0)
    -> Bonsai.Dsp.Tile(RowTiles=6, ColumnTiles=1)
    -> MulticastSubject AnalogOutput

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=1, Bottom=0, Top=1) => #38
    SubscribeSubject LFPData => #39
    #38, #39 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
    -> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=lfp_material, TextureUniformName=uTexture)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=0.5)
    SubscribeSubject SpikeData => #45
    #38, #45 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
    -> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=spike_material, TextureUniformName=uTexture)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=1, Height=0.5)

ExternalizedMapping
  Path(DisplayName=LoggingDirectory, Category=LoggingDirectory)
  SpikeDataLogName
  LfpDataLogName
  FrameCounterLogName
  ClockLogName
  ManipulatorPositionLogName
-> GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=Path, Category=Logging))
    -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value="D:\ONIX TEST DATA")
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Value + "_" + TimeStamp.UtcDateTime.ToString("yyyy-MM-ddTHHmmssZ") + "\"
    -> Take(Count=1)
    -> AsyncSubject LoggingPath

    SubscribeSubject SpikeData => #6
    SubscribeSubject LoggingPath => #7
    ExternalizedMapping(Value(DisplayName=SpikeDataLogName, Category=Logging))
    -> StringProperty(Value=SpikeData.bin) => #9
    #7, #9 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #12
    #6, #12 -> Bonsai.Dsp.MatrixWriter(Path="D:\ONIX TEST DATA_2024-02-13T170706Z\\SpikeData.bin", Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject LFPData => #14
    SubscribeSubject LoggingPath => #15
    ExternalizedMapping(Value(DisplayName=LfpDataLogName, Category=Logging))
    -> StringProperty(Value=LFP.bin) => #17
    #15, #17 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #20
    #14, #20 -> Bonsai.Dsp.MatrixWriter(Path="D:\ONIX TEST DATA_2024-02-13T170706Z\\LFP.bin", Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject FrameCounter => #22
    SubscribeSubject LoggingPath => #23
    ExternalizedMapping(Value(DisplayName=FrameCounterLogName, Category=Logging))
    -> StringProperty(Value=FrameCounter.bin) => #25
    #23, #25 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #28
    #22, #28 -> Bonsai.Dsp.MatrixWriter(Path="D:\ONIX TEST DATA_2024-02-13T170706Z\\FrameCounter.bin", Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject Clock => #30
    SubscribeSubject LoggingPath => #31
    ExternalizedMapping(Value(DisplayName=ClockLogName, Category=Logging))
    -> StringProperty(Value=Clock.bin) => #33
    #31, #33 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #36
    #30, #36 -> Bonsai.Dsp.MatrixWriter(Path="D:\ONIX TEST DATA_2024-02-13T170706Z\\Clock.bin", Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject TimestampedCurrentPosition => #38
    SubscribeSubject LoggingPath => #39
    ExternalizedMapping(Value(DisplayName=ManipulatorPositionLogName, Category=Logging))
    -> StringProperty(Value=CurrentPosition.csv) => #41
    #39, #41 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(FileName) => #44
    #38, #44 -> Bonsai.IO.CsvWriter(FileName="D:\ONIX TEST DATA_2024-02-13T170706Z\\CurrentPosition.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
