WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=4096, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454412891
    PerformReadCheck=true
    CalibrationFolderPath=C:\Users\Admin\Desktop\19454412891-20230913T100948Z-001\19454412891
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
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    ADCs
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=512)
      NeuropixelsV1ADC(CompP=8, CompN=22, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=0, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=10, CompN=20, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=15, CompN=15, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
  RequireSNMatch=false
  BlockSize=2
-> MemberSelector(Selector=SpikeData)
-> Bonsai.Dsp.MatrixWriter(Path=data_sample.bin, Suffix=None, Overwrite=true, Layout=ColumnMajor)
-> PublishSubject SpikeData
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=2, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=probe_image, TextureUniformName=uTexture)

SubscribeSubject SpikeData
-> Bonsai.Dsp.Submatrix(StartRow=200, EndRow=201, StartCol=0, EndCol=nil)
-> Bonsai.Dsp.Rescale(Min=0, Max=1000, RangeMin=-0.1, RangeMax=-0.1, RescaleType=Linear)
-> Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=0)
-> Bonsai.Dsp.Tile(RowTiles=12, ColumnTiles=1)
-> Bonsai.ONIX.AnalogIODevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
  BlockSize=240
  DataType=Volts
  EnableStream=false
  InputRange00=TenVolts
  InputRange01=TenVolts
  InputRange02=TenVolts
  InputRange03=TenVolts
  InputRange04=TenVolts
  InputRange05=TenVolts
  InputRange06=TenVolts
  InputRange07=TenVolts
  InputRange08=TenVolts
  InputRange09=TenVolts
  InputRange10=TenVolts
  InputRange11=TenVolts
  Direction00=Output
  Direction01=Input
  Direction02=Input
  Direction03=Input
  Direction04=Input
  Direction05=Input
  Direction06=Input
  Direction07=Input
  Direction08=Input
  Direction09=Input
  Direction10=Input
  Direction11=Input

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=probe_image
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
-> Bonsai.Resources.LoadResources

Bonsai.ONIX.MemoryUsageDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10), EnableStream=true, UpdateHz=100)
-> MemberSelector(Selector=MemoryUsagePercentage)

SubscribeSubject SpikeData
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)

Disable Bonsai.Dsp.FunctionGenerator(BufferLength=10, Frequency=100, Waveform=Sine, SampleRate=100000, Depth=F64, Amplitude=1, Offset=0, Phase=0)
-> Disable Bonsai.Dsp.Tile(RowTiles=12, ColumnTiles=1)
-> Disable Bonsai.ONIX.AnalogIODevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
  BlockSize=120
  DataType=Volts
  EnableStream=false
  InputRange00=TenVolts
  InputRange01=TenVolts
  InputRange02=TenVolts
  InputRange03=TenVolts
  InputRange04=TenVolts
  InputRange05=TenVolts
  InputRange06=TenVolts
  InputRange07=TenVolts
  InputRange08=TenVolts
  InputRange09=TenVolts
  InputRange10=TenVolts
  InputRange11=TenVolts
  Direction00=Output
  Direction01=Input
  Direction02=Input
  Direction03=Input
  Direction04=Input
  Direction05=Input
  Direction06=Input
  Direction07=Input
  Direction08=Input
  Direction09=Input
  Direction10=Input
  Direction11=Input

Disable Bonsai.ONIX.RealTimeFunctionGenerator(BufferLength=10, Frequency=100, Waveform=Sine, Depth=F64, Amplitude=1, Offset=0, Phase=0)
-> Disable Bonsai.Dsp.Tile(RowTiles=12, ColumnTiles=1)
-> Disable Bonsai.ONIX.AnalogIODevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
  BlockSize=120
  DataType=Volts
  EnableStream=false
  InputRange00=TenVolts
  InputRange01=TenVolts
  InputRange02=TenVolts
  InputRange03=TenVolts
  InputRange04=TenVolts
  InputRange05=TenVolts
  InputRange06=TenVolts
  InputRange07=TenVolts
  InputRange08=TenVolts
  InputRange09=TenVolts
  InputRange10=TenVolts
  InputRange11=TenVolts
  Direction00=Output
  Direction01=Input
  Direction02=Input
  Direction03=Input
  Direction04=Input
  Direction05=Input
  Direction06=Input
  Direction07=Input
  Direction08=Input
  Direction09=Input
  Direction10=Input
  Direction11=Input
