WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device => #1
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454412891
    PerformReadCheck=true
    CalibrationFolderPath=C:\Users\Admin\Desktop\19454412891-20230913T100948Z-001\19454412891
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
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    ADCs
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=512)
      NeuropixelsV1ADC(CompP=8, CompN=22, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=0, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=10, CompN=20, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=15, CompN=15, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
  RequireSNMatch=false
  BlockSize=1
-> MemberSelector(Selector=SpikeData)
-> PublishSubject SpikeData
#1 -> MemberSelector(Selector=LFPData)
-> PublishSubject LfpData

Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
-> Bonsai.Dsp.FunctionGenerator(BufferLength=12, Frequency=1, Waveform=Sawtooth, SampleRate=12, Depth=F64, Amplitude=6, Offset=3, Phase=-3.14159265358979) => #7
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #8
-> Bonsai.Dsp.FunctionGenerator(BufferLength=12, Frequency=1, Waveform=Sawtooth, SampleRate=12, Depth=F64, Amplitude=6, Offset=3, Phase=-3.14159265358979) => #9
#8 -> Bonsai.Dsp.FunctionGenerator(BufferLength=12, Frequency=1, Waveform=Sawtooth, SampleRate=12, Depth=F64, Amplitude=6, Offset=3, Phase=-3.14159265358979)
-> Bonsai.Dsp.Shift(Offset(X=12, Y=0), BorderType=Reflect, FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #11
#9, #11 -> Zip
-> Bonsai.Dsp.Concat(Axis=0)
-> Bonsai.Dsp.Tile(RowTiles=6, ColumnTiles=1)
-> Bonsai.Dsp.Transpose => #15
#7, #15 -> Merge
-> Bonsai.ONIX.AnalogIODevice => #17
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=6)
  BlockSize=1000
  DataType=Volts
  EnableStream=true
  InputRange00=TenVolts
  InputRange01=TenVolts
  InputRange02=TenVolts
  InputRange03=TenVolts
  InputRange04=TenVolts
  InputRange05=TenVolts
  InputRange06=TenVolts
  InputRange07=TenVolts
  InputRange08=TenVolts
  InputRange09=TenVolts
  InputRange10=TenVolts
  InputRange11=TenVolts
  Direction00=Output
  Direction01=Output
  Direction02=Output
  Direction03=Output
  Direction04=Output
  Direction05=Output
  Direction06=Output
  Direction07=Output
  Direction08=Output
  Direction09=Output
  Direction10=Output
  Direction11=Output
-> MemberSelector(Selector=Data) => #18
-> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=1, StartCol=0, EndCol=nil)
-> VisualizerMapping => #20
#18 -> Bonsai.Dsp.Submatrix(StartRow=1, EndRow=2, StartCol=0, EndCol=nil)
-> VisualizerMapping => #22
#18 -> Bonsai.Dsp.Submatrix(StartRow=2, EndRow=3, StartCol=0, EndCol=nil)
-> VisualizerMapping => #24
#18 -> Bonsai.Dsp.Submatrix(StartRow=3, EndRow=4, StartCol=0, EndCol=nil)
-> VisualizerMapping => #26
#18 -> Bonsai.Dsp.Submatrix(StartRow=4, EndRow=5, StartCol=0, EndCol=nil)
-> VisualizerMapping => #28
#18 -> Bonsai.Dsp.Submatrix(StartRow=5, EndRow=6, StartCol=0, EndCol=nil)
-> VisualizerMapping => #30
#20, #22, #24, #26, #28, #30 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=6, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
#17 -> MemberSelector(Selector=Clock)
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)
-> Bonsai.Dsp.Buffer(Count=100, Skip=nil)
-> Bonsai.Dsp.Average
