WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(Path)
-> LoadArenaSettings(Path=C:\Users\ONIX\source\ae-dev\vestibular-vr\src\vr-arena-session.yml)
-> Take(Count=1)
-> AsyncSubject ArenaSettings

ExternalizedMapping(StartCamerasKey, StopCamerasKey)
-> GroupWorkflow CameraControl
    SubscribeSubject ArenaSettings => #0
    -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #2
    #0 -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #4
    #0 -> Delay(DueTime=PT1S) => #5
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=CameraSettings.CameraFrequency1)
    -> PropertyMapping(Cam0TriggerFrequency) => #8
    #5, #8 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerFrequencyPayload(Cam0TriggerFrequency=100)) => #9
    #0 -> Delay(DueTime=PT1S) => #10
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=CameraSettings.CameraExposure1)
    -> PropertyMapping(Cam0TriggerDuration) => #13
    #10, #13 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerDurationPayload(Cam0TriggerDuration=5000)) => #14
    #0 -> Delay(DueTime=PT1S) => #15
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=CameraSettings.CameraFrequency1)
    -> PropertyMapping(Cam1TriggerFrequency) => #18
    #15, #18 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerFrequencyPayload(Cam1TriggerFrequency=100)) => #19
    #0 -> Delay(DueTime=PT1S) => #20
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=CameraSettings.CameraExposure2)
    -> PropertyMapping(Cam1TriggerDuration) => #23
    #20, #23 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerDurationPayload(Cam1TriggerDuration=5000)) => #24
    #2, #4, #9, #14, #19, #24 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StartCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false) => #28
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam0)) => #29
    #28 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam1)) => #30
    #29, #30 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StopCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift", SuppressRepetitions=false) => #34
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #35
    #34 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #36
    #35, #36 -> Merge
    -> MulticastSubject H1Commands

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam0Event) => #40
    ExternalizedMapping(SerialNumber(DisplayName=Camera1SerialNumber, Category=CameraControl)) => #41
    #40, #41 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=21205223, ColorProcessing=Default)
    -> PublishSubject Camera1

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam1Event) => #45
    ExternalizedMapping(SerialNumber(DisplayName=Camera2SerialNumber, Category=CameraControl)) => #46
    #45, #46 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=22085343, ColorProcessing=Default)
    -> PublishSubject Camera2

ExternalizedMapping(HomePlatform, StepCCW, StepCW)
-> GroupWorkflow H2Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H2Commands
    -> Harp.VestibularH2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM11)
    -> PublishSubject H2Events
    -> WorkflowOutput

    SubscribeSubject H2Events
    -> Harp.VestibularH2.FilterRegister(FilterType=Include, Register=Harp.VestibularH2.Encoder)
    -> Harp.VestibularH2.Parse(Register=Harp.VestibularH2.TimestampedEncoder)
    -> MemberSelector(Selector=Value)
    -> PublishSubject RotaryEncoder

    SubscribeSubject H2Events
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=39))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=false))
    -> MemberSelector(Selector=Value)
    -> PublishSubject HallSensor

    BooleanProperty(Value=false)
    -> MulticastSubject PlatformHomed

    BehaviorSubject<System.Boolean> PlatformHomed

    BehaviorSubject<System.Reactive.Unit> HomePlatform
    -> CreateObservable HomePlatform
        SubscribeSubject HallSensor
        -> LessThan(Operand=WorkflowProperty<System.Int16>(Value=200))
        -> Condition Home
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject PlatformHomed
        -> WorkflowOutput

        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject PlatformHomed
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=200))
        -> MulticastSubject H2Commands
    -> Switch

    BehaviorSubject<System.Int32> StepPlatform
    -> SelectMany StepPlatform
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject StepPulseInterval

        SubscribeSubject StepPulseInterval
        -> PropertyMapping(ImmediatePulses)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=1600))
        -> MulticastSubject H2Commands
        -> Delay(DueTime=PT0.2S)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=HomePlatform, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Back H Shift", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject HomePlatform

    ExternalizedMapping(Filter(DisplayName=StepCCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Space Prior PageUp Home Left Shift", SuppressRepetitions=false)
    -> IntProperty(Value=500)
    -> MulticastSubject StepPlatform

    ExternalizedMapping(Filter(DisplayName=StepCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Shift", SuppressRepetitions=false)
    -> IntProperty(Value=-500)
    -> MulticastSubject StepPlatform

    SubscribeSubject ArenaSettings => #34
    -> Delay(DueTime=PT0.5S) => #35
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableMotor)) => #36
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableAnalogInput)) => #37
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableEncoder)) => #38
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=ResetEncoder)) => #39
    #34 -> Delay(DueTime=PT1S) => #40
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableMotor)) => #41
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableAnalogInput)) => #42
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableEncoder)) => #43
    #34 -> MemberSelector(Selector=MotorSettings.NominalPulseInterval)
    -> PropertyMapping(NominalPulseInterval) => #45
    #45, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateNominalPulseIntervalPayload(NominalPulseInterval=200)) => #46
    #34 -> MemberSelector(Selector=MotorSettings.InitialPulseInterval)
    -> PropertyMapping(InitialPulseInterval) => #48
    #48, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateInitialPulseIntervalPayload(InitialPulseInterval=200)) => #49
    #34 -> MemberSelector(Selector=MotorSettings.PulseStepInterval)
    -> PropertyMapping(PulseStepInterval) => #51
    #51, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulseStepIntervalPayload(PulseStepInterval=2)) => #52
    #34 -> MemberSelector(Selector=MotorSettings.PulsePeriod)
    -> PropertyMapping(PulsePeriod) => #54
    #54, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulsePeriodPayload(PulsePeriod=10)) => #55
    #36, #37, #38, #39, #41, #42, #43, #46, #49, #52, #55 -> Merge
    -> MulticastSubject H2Commands

ExternalizedMapping(StartSyncKey)
-> GroupWorkflow OnixHardware
    OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0)
    -> OpenEphys.Onix1.ConfigureBreakoutBoard
      Name=BreakoutBoard
      Heartbeat(DeviceName=BreakoutBoard/Heartbeat, DeviceAddress=0, Enable=true, BeatsPerSecond=10)
      AnalogIO
        DeviceName=BreakoutBoard/AnalogIO
        DeviceAddress=6
        Enable=true
        InputRange0=TenVolts
        InputRange1=TenVolts
        InputRange2=TenVolts
        InputRange3=TenVolts
        InputRange4=TenVolts
        InputRange5=TenVolts
        InputRange6=TenVolts
        InputRange7=TenVolts
        InputRange8=TenVolts
        InputRange9=TenVolts
        InputRange10=TenVolts
        InputRange11=TenVolts
        Direction0=Input
        Direction1=Input
        Direction2=Input
        Direction3=Input
        Direction4=Input
        Direction5=Input
        Direction6=Input
        Direction7=Input
        Direction8=Input
        Direction9=Input
        Direction10=Input
        Direction11=Input
      DigitalIO(DeviceName=BreakoutBoard/DigitalIO, DeviceAddress=7, Enable=true)
      ClockOutput(DeviceName=BreakoutBoard/OutputClock, DeviceAddress=5, ClockGate=false, Frequency=1000000, DutyCycle=50, Delay=0)
      HarpInput(DeviceName=BreakoutBoard/HarpSyncInput, DeviceAddress=12, Enable=true, Source=ClockAdapter)
      MemoryMonitor(DeviceName=BreakoutBoard/MemoryMonitor, DeviceAddress=10, Enable=true, SamplesPerSecond=10)
    -> OpenEphys.Onix1.StartAcquisition(ReadSize=2048, WriteSize=2048)

    OpenEphys.Onix1.AnalogInput(DeviceName=BreakoutBoard/AnalogIO, BufferSize=100, DataType=S16)
    -> PublishSubject OnixAnalog

    BehaviorSubject<System.Int32> OnixDigitalCommands
    -> OpenEphys.Onix1.DigitalOutput(DeviceName=BreakoutBoard/DigitalIO)

    OpenEphys.Onix1.DigitalInput(DeviceName=BreakoutBoard/DigitalIO)
    -> PublishSubject OnixDigital

    OpenEphys.Onix1.HarpSyncInputData(DeviceName=BreakoutBoard/HarpSyncInput)
    -> PublishSubject OnixHarp

    IntProperty(Value=0)
    -> MulticastSubject OnixDigitalCommands

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=5)
    -> BehaviorSubject SyncDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject SyncPulseState

    ExternalizedMapping(Filter(DisplayName=StartSyncKey, Category=ONIX))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> AsyncSubject InitSync

    SubscribeSubject InitSync
    -> SelectMany DoSyncPulse
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Trigger

        SubscribeSubject Trigger => #3
        SubscribeSubject SyncDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT3.452S) => #8
        SubscribeSubject SyncPulseState
        -> BitwiseNot => #10
        #8, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject SyncPulseState
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> MulticastSubject OnixDigitalCommands
        -> WorkflowOutput
    -> Take(Count=1)
    -> Repeat

ExternalizedMapping(StartLoggingKey)
-> GroupWorkflow Logging
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.RootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:/TrialLogicTestData/, ChunkSize=1)

    SubscribeSubject H1Events => #4
    SubscribeSubject StartLoggingKey => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH1, Heartbeats=H1Events, ClosingDuration=nil)

    SubscribeSubject H2Events => #8
    SubscribeSubject StartLoggingKey => #9
    #8, #9 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH2, Heartbeats=H2Events, ClosingDuration=nil)

    SubscribeSubject ScreenRender => #12
    SubscribeSubject StartLoggingKey => #13
    #12, #13 -> SubscribeWhen => #14
    SubscribeSubject PathPrefix
    -> Format(Format={0}/ScreenRender/screen_render.avi, Selector=it)
    -> PropertyMapping(FileName) => #17
    #14, #17 -> Bonsai.Vision.VideoWriter
      FileName=D:/TrialLogicTestData/\2025-03-11T14-52-35/ScreenRender/screen_render.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject Camera1 => #19
    SubscribeSubject StartLoggingKey => #20
    #19, #20 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData1, FrameRate=50)

    SubscribeSubject Camera2 => #23
    SubscribeSubject StartLoggingKey => #24
    #23, #24 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData2, FrameRate=50)

    SubscribeSubject ArenaSettings => #27
    SubscribeSubject H1Events => #28
    #27, #28 -> SubscribeWhen => #29
    SubscribeSubject StartLoggingKey => #30
    #29, #30 -> SubscribeWhen
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject OnixAnalog => #35
    -> WindowCount(Count=360000, Skip=nil) => #36
    SubscribeSubject StartLoggingKey => #37
    #36, #37 -> SubscribeWhen => #38
    -> CreateObservable AnalogData
        WorkflowInput Source1
        -> MemberSelector(Selector=AnalogData)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogData)
    #38 -> CreateObservable AnalogClock
        WorkflowInput Source1
        -> MemberSelector(Selector=Clock)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogClock)
    #38 -> CreateObservable AnalogHubSyncCounter
        WorkflowInput Source1
        -> MemberSelector(Selector=HubClock)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogHubSyncCounter)
    #35 -> ElementIndex => #45
    SubscribeSubject StartLoggingKey => #46
    #45, #46 -> SubscribeWhen
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=OnixAnalogFrameCount, Selector="Seconds,Value.Index")

    SubscribeSubject OnixHarp
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #51
    SubscribeSubject StartLoggingKey => #52
    #51, #52 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=OnixHarp, Selector="Seconds,Value.Clock,Value.HarpTime")

    SubscribeSubject OnixDigital
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
          it.Clock as Clock,
          it.HubClock as HubClock,
          Convert.ToInt32(it.DigitalInputs) as DigitalInputs,
          Convert.ToInt32(it.Buttons) as Buttons
        )
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #57
    SubscribeSubject StartLoggingKey => #58
    #57, #58 -> SubscribeWhen
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=H1Events
      ClosingDuration=nil
      LogName=OnixDigital
      Selector="Seconds,Value.Clock,Value.HubClock,Value.DigitalInputs,Value.Buttons"

    ExternalizedMapping(Filter(DisplayName=StartLoggingKey, Category=LoggingControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false)
    -> PublishSubject StartLoggingKey

ExternalizedMapping(PortName)
-> GroupWorkflow H1Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H1Commands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Harp.VestibularH1.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
    -> PublishSubject H1Events
    -> WorkflowOutput

    SubscribeSubject H1Events
    -> Harp.VestibularH1.FilterRegister(FilterType=Include, Register=Harp.VestibularH1.OpticalTrackingRead)
    -> PublishSubject FlowSensorRead
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedOpticalTrackingRead)
    -> MemberSelector(Selector=Value) => #9
    -> Index(Operand=IntProperty(Value=0)) => #10
    #9 -> Index(Operand=IntProperty(Value=1)) => #11
    #9 -> Index(Operand=IntProperty(Value=2)) => #12
    #10, #11, #12 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor1
    #9 -> Index(Operand=IntProperty(Value=3)) => #16
    #9 -> Index(Operand=IntProperty(Value=4)) => #17
    #9 -> Index(Operand=IntProperty(Value=5)) => #18
    #16, #17, #18 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor2

GroupWorkflow Objects
    SubscribeSubject DrawCall
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-5
      TranslationY=10
      TranslationZ=-30
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=5
      ScaleY=5
      ScaleZ=5
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder

    SubscribeSubject DrawCall
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-20
      TranslationY=0
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=1
      ScaleY=1
      ScaleZ=1
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder

    SubscribeSubject DrawCall
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=15
      TranslationY=3
      TranslationZ=-1
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=3
      ScaleY=3
      ScaleZ=3
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=icosphere

    SubscribeSubject DrawCall
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=40
      TranslationY=10
      TranslationZ=-30
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=5
      ScaleY=5
      ScaleZ=0
      Ambient(X=0, Y=1, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cube

    SubscribeSubject DrawCall
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-40
      TranslationY=0
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=1
      ScaleY=1
      ScaleZ=1
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder

    SubscribeSubject DrawCall

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=3
      TranslationZ=-10
      RotationZ=0
      RotationY=180
      RotationX=0
      ScaleX=1
      ScaleY=1
      ScaleZ=1
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=40
      TranslationY=5
      TranslationZ=0
      RotationZ=0
      RotationY=180
      RotationX=0
      ScaleX=5
      ScaleY=5
      ScaleZ=5
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=suzanne

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-20
      TranslationY=10
      TranslationZ=-10
      RotationZ=0
      RotationY=180
      RotationX=0
      ScaleX=5
      ScaleY=5
      ScaleZ=5
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder

GroupWorkflow VisualEnvironment
    Bonsai.Shaders.CreateWindow
      Width=1920
      Height=720
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cylinder, FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Models\cylinder.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icosphere, FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Models\icosphere.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Models\cube.obj)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #5
    SubscribeSubject CurrentPosition
    -> PropertyMapping(Eye) => #7
    #5, #7 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=59, Y=0, Z=59), NearClip=0.1, FarClip=1000, Light(X=0, Y=20, Z=0))
    -> PublishSubject DrawCall
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
    -> GroupWorkflow FrontView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.54, Height=0.3, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0.3)) => #2
        ExternalizedMapping(X, Y, Width(DisplayName=W), Height(DisplayName=H)) => #3
        #2, #3 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #10 -> GroupWorkflow LeftView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.54, Height=0.3, Rotation(X=0, Y=90.0000025044782, Z=0), Translation(X=-0.3, Y=0, Z=0)) => #2
        ExternalizedMapping(X, Y, Width(DisplayName=W), Height(DisplayName=H)) => #3
        #2, #3 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #10 -> GroupWorkflow BackView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.54, Height=0.3, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-0.3)) => #2
        ExternalizedMapping(X, Y, Width(DisplayName=W), Height(DisplayName=H)) => #3
        #2, #3 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #10 -> GroupWorkflow RightView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.54, Height=0.3, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=0.3, Y=0, Z=0)) => #2
        ExternalizedMapping(X, Y, Width(DisplayName=W), Height(DisplayName=H)) => #3
        #2, #3 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    -> PublishSubject PostDrawing

    SubscribeSubject PostDrawing
    -> Int64Property(Value=1)
    -> Accumulate
    -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
    -> Bonsai.Shaders.UpdateRenderState(RenderState="")
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #21
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #22
    #21 -> PropertyMapping(ColorA) => #23
    #22, #23 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0.05
      ExtentY=0.2
      LocationX=-0.4
      LocationY=-0.9
      Layer=10
      Angle=0
      ColorR=1
      ColorG=1
      ColorB=1
      ColorA=1

    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
    -> PublishSubject ScreenRender

GroupWorkflow DrawArena
    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #1
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize)
    -> PropertyMapping(ScaleX, ScaleY) => #4
    #1, #4 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=-1
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=90
      ScaleX=120
      ScaleY=120
      ScaleZ=1
      Ambient(X=0.2, Y=0.2, Z=0.2)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #7
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize) => #9
    -> PropertyMapping(ScaleX) => #10
    #9 -> Divide(Operand=DoubleProperty(Value=-2))
    -> PropertyMapping(TranslationX) => #12
    #7, #10, #12 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=-60
      TranslationY=0
      TranslationZ=0
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=120
      ScaleY=10
      ScaleZ=1
      Ambient(X=0.2, Y=0.2, Z=0.2)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #15
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize) => #17
    -> PropertyMapping(ScaleX) => #18
    #17 -> Divide(Operand=DoubleProperty(Value=-2))
    -> PropertyMapping(TranslationZ) => #20
    #15, #18, #20 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=0
      TranslationZ=-60
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=120
      ScaleY=10
      ScaleZ=1
      Ambient(X=1, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #23
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize) => #25
    -> PropertyMapping(ScaleX) => #26
    #25 -> Divide(Operand=DoubleProperty(Value=2))
    -> PropertyMapping(TranslationX) => #28
    #23, #26, #28 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=60
      TranslationY=0
      TranslationZ=0
      RotationZ=0
      RotationY=90
      RotationX=0
      ScaleX=120
      ScaleY=10
      ScaleZ=1
      Ambient(X=0, Y=0, Z=1)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=Plane

    SubscribeSubject DrawCall
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #31
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize) => #33
    -> PropertyMapping(ScaleX) => #34
    #33 -> Divide(Operand=DoubleProperty(Value=2))
    -> PropertyMapping(TranslationZ) => #36
    #31, #34, #36 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawTexturedModel.bonsai
      TranslationX=0
      TranslationY=0
      TranslationZ=60
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=120
      ScaleY=10
      ScaleZ=1
      Ambient(X=0, Y=1, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=Plane

GroupWorkflow PositionUpdates
    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-18)
    -> BehaviorSubject CurrentPosition

    Bonsai.Shaders.CreateQuaternionRotation(Rotation(Xyz(X=0, Y=0, Z=0), W=1))
    -> BehaviorSubject CurrentRotation

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1)
    -> BehaviorSubject ForwardVector

    SubscribeSubject FlowSensor1 => #6
    -> MemberSelector(Selector=Y)
    -> PublishSubject RotationDelta
    #6 -> MemberSelector(Selector=X)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> PublishSubject ForwardDelta

    SubscribeSubject ForwardDelta => #12
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.FlowToVisualTranslation)
    -> PropertyMapping(Value) => #15
    #12, #15 -> Multiply(Operand=FloatProperty(Value=0.0008)) => #16
    SubscribeSubject ForwardVector => #17
    #16, #17 -> WithLatestFrom
    -> Multiply => #19
    SubscribeSubject CurrentPosition => #20
    #19, #20 -> WithLatestFrom
    -> Add => #22
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.ArenaSize) => #24
    -> Divide(Operand=DoubleProperty(Value=-2))
    -> Subtract(Operand=DoubleProperty(Value=-1))
    -> InputMapping(X(Selector=it), Y(Selector=it), Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=-59, Y=-59, Z=-59)
    -> PropertyMapping(MinVector) => #29
    #24 -> Divide(Operand=DoubleProperty(Value=2))
    -> Subtract(Operand=DoubleProperty(Value=1))
    -> InputMapping(X(Selector=it), Y(Selector=it), Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=59, Y=59, Z=59)
    -> PropertyMapping(MaxVector) => #34
    #22, #29, #34 -> ClampVector(MinVector(X=-59, Y=-59, Z=-59), MaxVector(X=59, Y=59, Z=59))
    -> MulticastSubject CurrentPosition

    SubscribeSubject RotationDelta => #37
    SubscribeSubject ArenaSettings
    -> MemberSelector(Selector=Metadata.FlowToMotorGain)
    -> PropertyMapping(Value) => #40
    #37, #40 -> Multiply(Operand=FloatProperty(Value=-4))
    -> Sink ApplyMotorMotion
        WorkflowInput Source1
        -> ToPulseInterval(ZeroThreshold=1E-06, MaxValue=0.02, MinValue=2.5E-05) => #1
        -> PropertyMapping(ImmediatePulses) => #2
        #1, #2 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=7142))
        -> MulticastSubject H2Commands
        -> WorkflowOutput

    SubscribeSubject RotaryEncoder => #43
    -> Skip(Count=1) => #44
    #43, #44 -> Zip
    -> OverflowDifference
    -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToRadians
      Expression: (Math.PI / 180) * ((Convert.ToDouble(it) / 24000) * 360)
    -> PublishSubject EncoderDelta

    SubscribeSubject EncoderDelta
    -> Accumulate => #50
    -> Bonsai.Shaders.CreateTransform(Position(X=0, Y=0, Z=1), Rotation(Xyz(X=0, Y=0, Z=0), W=1), Scale(X=1, Y=1, Z=1)) => #51
    #50 -> PropertyMapping(Angle) => #52
    #51, #52 -> Bonsai.Shaders.RotateAxisAngle(Order=Append, Axis(X=0, Y=1, Z=0), Angle=-3.03975272)
    -> Bonsai.Shaders.ExtractTranslation
    -> MulticastSubject ForwardVector

Disable SubscribeSubject ArenaSettings
-> Disable MemberSelector(Selector=ObjectDefinitions)
-> Disable Merge
-> Disable SelectMany DrawObject
    SubscribeSubject DrawCall => #0
    WorkflowInput Source1
    -> MemberSelector(Selector=MeshName) => #2
    #0, #2 -> CombineLatest
    -> InputMapping(Selector=Item1, MeshName(Selector=Item2))
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-5
      TranslationY=0
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=1
      ScaleY=1
      ScaleZ=1
      Ambient(X=1, Y=0, Z=0)
      Diffuse(X=0.8, Y=0.8, Z=0.8)
      Specular(X=0.8, Y=0.8, Z=0.8)
      SpecularExponent=10
      MeshName=cylinder
    -> WorkflowOutput

Disable SubscribeSubject DrawCall => #22
Disable SubscribeSubject ArenaSettings
-> Disable MemberSelector(Selector=ObjectDefinitions)
-> Disable Index(Operand=IntProperty(Value=2)) => #25
-> Disable MemberSelector(Selector=Position.ValX)
-> Disable PropertyMapping(TranslationX) => #27
#25 -> Disable MemberSelector(Selector=Position.ValY)
-> Disable PropertyMapping(TranslationY) => #29
#25 -> Disable MemberSelector(Selector=Position.ValZ)
-> Disable PropertyMapping(TranslationZ) => #31
#25 -> Disable MemberSelector(Selector=MeshName)
-> Disable PropertyMapping(MeshName) => #33
#22, #27, #29, #31, #33 -> Disable IncludeWorkflow
  Path=BonVision:Primitives.DrawModel.bonsai
  TranslationX=-5
  TranslationY=0
  TranslationZ=0
  RotationZ=0
  RotationY=0
  RotationX=0
  ScaleX=1
  ScaleY=1
  ScaleZ=1
  Ambient(X=1, Y=0, Z=0)
  Diffuse(X=0.8, Y=0.8, Z=0.8)
  Specular(X=0.8, Y=0.8, Z=0.8)
  SpecularExponent=10
  MeshName=cylinder
