WorkflowBuilder(Version=2.8.5)
SubscribeSubject ExperimentEvents
-> VisualizerMapping => #1
SubscribeSubject Camera1
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #4
SubscribeSubject Camera2
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #7
SubscribeSubject OnixHarp
-> Unit => #9
Unit => #10
#9, #10 -> Merge
-> SelectMany TimeSinceHarpSync
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject OnixHarp => #1
    #0, #1 -> TakeUntil
    -> WorkflowOutput

    WorkflowInput Source1
-> VisualizerMapping => #13
#1, #4, #7, #13 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=4, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")

ExternalizedMapping(SessionSettingsPath)
-> GroupWorkflow Initialization
    ExternalizedMapping(Path(DisplayName=SessionSettingsPath, Category="Session Settings"))
    -> LoadSettings(Path=C:\Users\ONIX\source\ae-dev\vestibular-vr\src\blockTypesTest.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    Bonsai.Shaders.CreateWindow
      Width=7680
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageSequence
          Name=test-cloud
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\test-cloud.mp4
          FlipMode=Vertical
          FrameCount=nil
          StartPosition=0
        TextureConfiguration=Bonsai.Shaders.ImageSequence
          Name=test-cloud-2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\test-cloud-2.mp4
          FlipMode=Vertical
          FrameCount=nil
          StartPosition=0
        TextureConfiguration=Bonsai.Shaders.ImageSequence
          Name=short-cloud
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\sf_0=0.01-B_sf=0.06-theta=0-B_theta=0.25-alpha=0-seed=1.mp4"
          FlipMode=Vertical
          FrameCount=nil
          StartPosition=0
    -> Bonsai.Resources.LoadResources

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject RngSeed
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> BehaviorSubject ProbabilitySampling

    BehaviorSubject<System.String> ExperimentEvents

    StringProperty(Value="Session start")
    -> MulticastSubject ExperimentEvents

    DoubleProperty(Value=0)
    -> BehaviorSubject PosCounter

GroupWorkflow "Visual Mapping"
    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
    -> BehaviorSubject DrawCall
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=2048, Height=2048, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #3
    -> GroupWorkflow FrontView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #3 -> GroupWorkflow RightView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #3 -> GroupWorkflow BackView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=0, Z=10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #3 -> GroupWorkflow LeftView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput

    GroupWorkflow ScreenSyncQuad
        StringProperty(Value=Idle)
        -> BehaviorSubject ScreenSyncEvents

        SubscribeSubject ScreenSyncEvents => #2
        -> Condition Idle
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Idle))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=0.5, Y=0.5, Z=0.5, W=1) => #4
        #2 -> Condition Moving
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Moving))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #6
        #2 -> Condition Halt
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Halt))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1) => #8
        #4, #6, #8 -> Merge
        -> MulticastSubject CurrentColor

        SubscribeSubject DrawCall => #11
        SubscribeSubject CurrentColor => #12
        -> MemberSelector(Selector=X)
        -> PropertyMapping(ColorR) => #14
        #12 -> MemberSelector(Selector=Y)
        -> PropertyMapping(ColorG) => #16
        #12 -> MemberSelector(Selector=Z)
        -> PropertyMapping(ColorB) => #18
        #11, #14, #16, #18 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=10
          ExtentY=10
          LocationX=48
          LocationY=-33
          Layer=0
          Angle=0
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1

        Bonsai.Shaders.CreateVector4(X=0.5, Y=0.5, Z=0.5, W=1)
        -> BehaviorSubject CurrentColor

ExternalizedMapping(StartTrialLogicKey)
-> GroupWorkflow "Trial Logic"
    SubscribeSubject SessionSettings => #0
    ExternalizedMapping(Filter(DisplayName=StartTrialLogicKey, Category=TrialControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false) => #2
    #0, #2 -> SubscribeWhen
    -> GroupWorkflow UnwrapTrialSequence
        WorkflowInput Source1
        -> MemberSelector(Selector=Blocks)
        -> Merge
        -> WorkflowOutput
    -> CreateObservable DoBlock
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Block

        SubscribeSubject Block
        -> Condition IsCloudStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Cloud))
            -> WorkflowOutput
        -> MemberSelector(Selector=Stimulus.TextureName) => #5
        -> SelectMany GetTextureData => #6
            WorkflowInput Source1
            -> PropertyMapping(TextureName)
            -> GetTextureData(TextureName=test-cloud-2)
            -> Take(Count=1)
            -> WorkflowOutput
        #5, #6 -> Zip
        -> Take(Count=1)
        -> AsyncSubject CurrentTextureData

        Bonsai.Numerics.CreateRandom(Seed=nil) => #10
        SubscribeSubject Block
        -> MemberSelector(Selector=HaltProtocol.RandomDelay)
        -> PropertyMapping(Upper) => #13
        #10, #13 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1.5)
        -> AsyncSubject DelaySampling

        SubscribeSubject Block
        -> MemberSelector(Selector=Alias)
        -> Format(Format="{0} block started", Selector=it)
        -> MulticastSubject ExperimentEvents

        BooleanProperty(Value=false)
        -> BehaviorSubject BlockFinished

        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RunGain) => #23
        SubscribeSubject Block
        -> MemberSelector(Selector=BlockGainModifier) => #25
        #23, #25 -> Zip
        -> Multiply
        -> BehaviorSubject BlockGain

        SubscribeSubject DrawCall => #29
        -> Condition IsGratingStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Grating))
            -> WorkflowOutput
        -> GroupWorkflow ClosedLoopGratings => #31
            WorkflowInput Source1 => #0
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #3
            SubscribeSubject LeftPhaseProcession
            -> PropertyMapping(Phase) => #5
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset1)
            -> PropertyMapping(LocationX) => #8
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent1)
            -> PropertyMapping(ExtentX) => #11
            #0, #3, #5, #8, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=60
              SpatialFrequency=0.1
              TemporalFrequency=0
              Phase=-11413.3193
              Angle=0
              SquareWave=false
              Contrast=2
              DutyCycle=nil
              Radius=1
              Aperture=20
              Opacity=1
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #15
            SubscribeSubject RightPhaseProcession
            -> PropertyMapping(Phase) => #17
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset2)
            -> PropertyMapping(LocationX) => #20
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent2)
            -> PropertyMapping(ExtentX) => #23
            #0, #15, #17, #20, #23 -> IncludeWorkflow => #24
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=0
              ExtentY=60
              SpatialFrequency=0.1
              TemporalFrequency=0
              Phase=21726.5586
              Angle=0
              SquareWave=false
              Contrast=2
              DutyCycle=nil
              Radius=1
              Aperture=20
              Opacity=1
            #12, #24 -> Zip
            -> WorkflowOutput
        #29 -> Condition IsCloudStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Cloud))
            -> WorkflowOutput
        -> GroupWorkflow MotionClouds => #33
            SubscribeSubject LeftPhaseProcession
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Convert.ToInt32(it)
            SubscribeSubject CurrentTextureData
            -> MemberSelector(Selector=Item2.Textures.Length) => #3
            -> PropertyMapping(MaxValue) => #4
            #1, #4 -> WrapValue(MaxValue=4096, StartWrap=0)
            -> PublishSubject MotionCloudIndexPositionLeft
            SubscribeSubject LeftPhaseProcession
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
              Expression: Convert.ToInt32(it)
            #3 -> PropertyMapping(MaxValue) => #10
            #9, #10 -> WrapValue(MaxValue=4096, StartWrap=0)
            -> PublishSubject MotionCloudIndexPositionRight

            WorkflowInput Source1 => #13
            IntProperty(Value=0) => #14
            SubscribeSubject MotionCloudIndexPositionLeft => #15
            #14, #15 -> Merge
            -> PropertyMapping(Index) => #17
            SubscribeSubject CurrentTextureData
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(TextureName) => #20
            #13, #17, #20 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=test-cloud-2, TextureTarget=Texture2D, Index=3897) => #21
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset1)
            -> PropertyMapping(LocationX) => #24
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent1)
            -> PropertyMapping(ExtentX) => #27
            #21, #24, #27 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=360
              ExtentY=60
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> MemberSelector(Selector=X) => #29
            IntProperty(Value=0) => #30
            SubscribeSubject MotionCloudIndexPositionRight => #31
            #30, #31 -> Merge
            -> PropertyMapping(Index) => #33
            SubscribeSubject CurrentTextureData
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(TextureName) => #36
            #13, #33, #36 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=test-cloud-2, TextureTarget=Texture2D, Index=199) => #37
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset2)
            -> PropertyMapping(LocationX) => #40
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent2)
            -> PropertyMapping(ExtentX) => #43
            #37, #40, #43 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=0
              ExtentY=60
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> MemberSelector(Selector=X) => #45
            #29, #45 -> Zip
            -> WorkflowOutput
        #31, #33 -> Merge => #34
        SubscribeSubject BlockFinished
        -> Condition => #36
            WorkflowInput Source1
            -> WorkflowOutput
        #34, #36 -> TakeUntil

        SubscribeSubject MotorProcession
        -> Sink ApplyMotorMotion
            WorkflowInput Source1
            -> ToPulseInterval(ZeroThreshold=1E-06, MaxValue=0.02, MinValue=2.5E-05) => #1
            -> PropertyMapping(ImmediatePulses) => #2
            #1, #2 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
            -> MulticastSubject H2Commands
            -> WorkflowOutput

        GroupWorkflow SmoothMovementDelta
            SubscribeSubject MovementDelta => #0
            -> MemberSelector(Selector=X) => #1
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowSmoothing) => #3
            -> PropertyMapping(Count) => #4
            #1, #4 -> Bonsai.Dsp.Buffer(Count=1, Skip=1)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0) => #7
            #0 -> MemberSelector(Selector=Y) => #8
            #3 -> PropertyMapping(Count) => #9
            #8, #9 -> Bonsai.Dsp.Buffer(Count=1, Skip=1)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0) => #12
            #7, #12 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                  it.Item1 as X,
                  it.Item2 as Y
                )
            -> PublishSubject SmoothedMovementDelta
            -> WorkflowOutput

        SubscribeSubject BlockGain
        -> PropertyMapping(Gain)
        -> GroupWorkflow CalculatePhaseProcession
            Annotation DeltaSwitch(Text="Used to globally control movement delta gain, e.g. set to 0 to halt update of visual stimuli, or to 1 to enable update.")
            -> BehaviorSubject<System.Single> MovementDeltaSwitch

            SubscribeSubject PhaseDelta => #2
            ExternalizedMapping(Value(DisplayName=Gain))
            -> FloatProperty(Value=0.0008) => #4
            #2, #4 -> WithLatestFrom
            -> Multiply => #6
            SubscribeSubject MovementDeltaSwitch => #7
            #6, #7 -> WithLatestFrom
            -> Multiply
            -> Accumulate => #10
            -> Add(Operand=FloatProperty(Value=0))
            -> Multiply(Operand=FloatProperty(Value=-1))
            -> PublishSubject LeftPhaseProcession
            #10 -> Add(Operand=FloatProperty(Value=180))
            -> Multiply(Operand=FloatProperty(Value=1))
            -> PublishSubject RightPhaseProcession

            SubscribeSubject SmoothedMovementDelta
            -> MemberSelector(Selector=X) => #18
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowXToVisualGain) => #20
            #18, #20 -> WithLatestFrom
            -> Multiply => #22
            SubscribeSubject SmoothedMovementDelta
            -> MemberSelector(Selector=Y) => #24
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowYToVisualGain) => #26
            #24, #26 -> WithLatestFrom
            -> Multiply => #28
            SubscribeSubject RotaryEncoder => #29
            SubscribeSubject Block
            -> MemberSelector(Selector=RotaryToVisualGain) => #31
            #29, #31 -> WithLatestFrom
            -> Multiply => #33
            SubscribeSubject PlaybackStream
            -> MemberSelector(Selector=Item1) => #35
            SubscribeSubject Block
            -> MemberSelector(Selector=PlaybackToVisualGain) => #37
            #35, #37 -> WithLatestFrom
            -> Multiply => #39
            #22, #28, #33, #39 -> Merge
            -> PublishSubject PhaseDelta

        SubscribeSubject BlockGain
        -> PropertyMapping(MotorGain)
        -> GroupWorkflow CalculateMotorProcession
            BehaviorSubject<System.Single> MotorDeltaSwitch

            SubscribeSubject MotorDelta => #1
            ExternalizedMapping(Value(DisplayName=MotorGain))
            -> FloatProperty(Value=0.0008) => #3
            #1, #3 -> WithLatestFrom
            -> Multiply => #5
            SubscribeSubject MotorDeltaSwitch => #6
            #5, #6 -> WithLatestFrom
            -> Multiply
            -> PublishSubject MotorProcession

            SubscribeSubject SmoothedMovementDelta => #10
            -> MemberSelector(Selector=X) => #11
            SubscribeSubject Block => #12
            -> MemberSelector(Selector=FlowXToMotorGain) => #13
            #11, #13 -> WithLatestFrom
            -> Multiply => #15
            #10 -> MemberSelector(Selector=Y) => #16
            #12 -> MemberSelector(Selector=FlowYToMotorGain) => #17
            #16, #17 -> WithLatestFrom
            -> Multiply => #19
            #15, #19 -> Zip => #20
            SubscribeSubject PlaybackStream
            -> MemberSelector(Selector=Item1) => #22
            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
              Expression: Convert.ToInt16(it)
            #22, #24 -> Merge => #25
            SubscribeSubject Block
            -> MemberSelector(Selector=PlaybackToMotorGain) => #27
            #25, #27 -> WithLatestFrom
            -> Multiply => #29
            #20, #29 -> WithLatestFrom => #30
            -> MemberSelector(Selector=Item1.Item1) => #31
            #30 -> MemberSelector(Selector=Item1.Item2) => #32
            #30 -> MemberSelector(Selector=Item2) => #33
            #31, #32, #33 -> Zip
            -> Add
            -> PublishSubject MotorDelta

        SubscribeSubject Block
        -> MemberSelector(Selector=TotalRuntime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT4M)
        -> StringProperty(Value="Block timer elapsed")
        -> MulticastSubject ExperimentEvents
        -> BooleanProperty(Value=true)
        -> MulticastSubject BlockFinished
        -> WorkflowOutput

        SubscribeSubject Block
        -> MemberSelector(Selector=PlaybackFilePath)
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it != ""
            -> WorkflowOutput
        -> CreateObservable LoadPlayback
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PlaybackFile

            SubscribeSubject PlaybackFile
            -> PropertyMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=C:/Users/ONIX/Desktop/playback_file_b3m3_4.csv, ListSeparator=",", ScanPattern=%s, SkipRows=0)
            -> Index(Operand=IntProperty(Value=1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: Convert.ToInt16(it)
            SubscribeSubject FlowSensorRead => #8
            #7, #8 -> Zip
            -> WorkflowOutput
        -> Merge
        -> PublishSubject PlaybackStream

        SubscribeSubject Block
        -> SelectMany HomePlatform => #64
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject HomePlatform
            -> StringProperty(Value="Homing platform")
            -> MulticastSubject ExperimentEvents

            SubscribeSubject PlatformHomed => #5
            Timer(DueTime=PT0.5S, Period=PT0S) => #6
            #5, #6 -> SubscribeWhen
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject Block
        -> Sink StartClosedLoop
            WorkflowInput Source1 => #0
            SubscribeSubject Block
            -> MemberSelector(Selector=InitialMotorMovementDelta)
            -> PropertyMapping(Value) => #3
            #0, #3 -> FloatProperty(Value=1)
            -> MulticastSubject MotorDeltaSwitch => #5
            SubscribeSubject Block
            -> MemberSelector(Selector=InitialVisualMovementDelta)
            -> PropertyMapping(Value) => #8
            #5, #8 -> FloatProperty(Value=0)
            -> MulticastSubject MovementDeltaSwitch
            -> WorkflowOutput
        -> Sink ScreenSyncMoving
            WorkflowInput Source1
            -> StringProperty(Value=Moving)
            -> MulticastSubject ScreenSyncEvents
            -> WorkflowOutput
        -> SelectMany TrialLoop
            SubscribeSubject MovementDelta => #0
            -> MemberSelector(Selector=X) => #1
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowXToRunGain) => #3
            #1, #3 -> WithLatestFrom
            -> Multiply => #5
            #0 -> MemberSelector(Selector=Y) => #6
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowYToRunGain) => #8
            #6, #8 -> WithLatestFrom
            -> Multiply => #10
            SubscribeSubject PlaybackStream
            -> MemberSelector(Selector=Item1) => #12
            SubscribeSubject Block
            -> MemberSelector(Selector=PlaybackToRunGain) => #14
            #12, #14 -> WithLatestFrom
            -> Multiply => #16
            #5, #10, #16 -> Merge => #17
            SubscribeSubject BlockGain => #18
            #17, #18 -> WithLatestFrom
            -> Multiply
            -> Bonsai.Dsp.Abs => #21
            SubscribeSubject Block
            -> MemberSelector(Selector=DecayTimestep)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Period)
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #26
            SubscribeSubject Block
            -> MemberSelector(Selector=RunThresholdDecay)
            -> PropertyMapping(Value) => #29
            #26, #29 -> DoubleProperty(Value=-1) => #30
            #21, #30 -> Merge => #31
            DoubleProperty(Value=0) => #32
            #31, #32 -> Scan
                WorkflowInput Source1
                -> MemberSelector(Selector="Accumulation,Value")
                -> Add
                -> Bonsai.Dsp.Rescale(Min=0, Max=1000000, RangeMin=0, RangeMax=1000000, RescaleType=Clamp)
                -> WorkflowOutput
            -> PublishSubject ThresholdDistance

            WorkflowInput Source1
            -> SelectMany WaitForThreshold
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> GreaterThan(Operand=DoubleProperty(Value=100))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Wait for run threshold...")
                -> MulticastSubject ExperimentEvents
            -> SelectMany DecideHalt => #37
                WorkflowInput Source1

                SubscribeSubject ProbabilitySampling
                -> Bonsai.Numerics.Distributions.Sample => #2
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProbability)
                -> PropertyMapping(Value) => #5
                #2, #5 -> LessThan(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput

                StringProperty(Value="Check halt probability")
                -> MulticastSubject ExperimentEvents
            -> Condition IsHalt
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany HaltDelay => #39
                WorkflowInput Source1

                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.MinumumDelay) => #2
                SubscribeSubject DelaySampling
                -> Bonsai.Numerics.Distributions.Sample => #4
                #2, #4 -> Zip
                -> Add
                -> AsyncSubject HaltTime

                SubscribeSubject HaltTime
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT0.326S)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Halt delay") => #14
                SubscribeSubject HaltTime => #15
                #14, #15 -> Zip
                -> Format(Format="{0}: {1}s", Selector="Item1,Item2")
                -> MulticastSubject ExperimentEvents
            -> Condition StillRunning
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> GreaterThan(Operand=DoubleProperty(Value=100))
                -> WorkflowOutput
            -> SelectMany ApplyHalt => #41
                WorkflowInput Source1 => #0
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltGain)
                -> PropertyMapping(Value) => #3
                #0, #3 -> FloatProperty(Value=1)
                -> MulticastSubject MovementDeltaSwitch => #5
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltMotorGain)
                -> PropertyMapping(Value) => #8
                #5, #8 -> FloatProperty(Value=1)
                -> MulticastSubject MotorDeltaSwitch
                -> StringProperty(Value=Halt)
                -> MulticastSubject ScreenSyncEvents

                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S)
                -> FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Apply halt") => #21
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltTime) => #23
                #21, #23 -> Zip
                -> Format(Format="{0}: {1}s", Selector="Item1,Item2")
                -> MulticastSubject ExperimentEvents
            #39 -> Condition NotRunning
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> LessThanOrEqual(Operand=DoubleProperty(Value=100))
                -> WorkflowOutput
            -> SelectMany NotRunning => #43
                WorkflowInput Source1

                FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Not running, skipping halt")
                -> MulticastSubject ExperimentEvents
            #37 -> Condition NotHalt
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany PerformNotHalt => #45
                WorkflowInput Source1

                FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="No halt")
                -> MulticastSubject ExperimentEvents
            #41, #43, #45 -> Merge
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Sink ScreenSyncIdle
            WorkflowInput Source1
            -> StringProperty(Value=Idle)
            -> MulticastSubject ScreenSyncEvents
            -> WorkflowOutput
        -> Repeat => #70
        #64, #70 -> Concat
    -> Concat
    -> WorkflowOutput

GroupWorkflow H1Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H1Commands
    -> Harp.VestibularH1.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM12)
    -> PublishSubject H1Events
    -> WorkflowOutput

    SubscribeSubject H1Events
    -> Harp.VestibularH1.FilterRegister(FilterType=Include, Register=Harp.VestibularH1.OpticalTrackingRead)
    -> PublishSubject FlowSensorRead
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedOpticalTrackingRead)
    -> MemberSelector(Selector=Value) => #8
    -> Index(Operand=IntProperty(Value=0)) => #9
    #8 -> Index(Operand=IntProperty(Value=1)) => #10
    #8 -> Index(Operand=IntProperty(Value=2)) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor1
    #8 -> Index(Operand=IntProperty(Value=3)) => #15
    #8 -> Index(Operand=IntProperty(Value=4)) => #16
    #8 -> Index(Operand=IntProperty(Value=5)) => #17
    #15, #16, #17 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor2

ExternalizedMapping(StartSyncKey)
-> GroupWorkflow OnixHardware
    OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0)
    -> OpenEphys.Onix1.ConfigureBreakoutBoard
      Name=BreakoutBoard
      Heartbeat(DeviceName=BreakoutBoard/Heartbeat, DeviceAddress=0, Enable=true, BeatsPerSecond=10)
      AnalogIO
        DeviceName=BreakoutBoard/AnalogIO
        DeviceAddress=6
        Enable=true
        InputRange0=TenVolts
        InputRange1=TenVolts
        InputRange2=TenVolts
        InputRange3=TenVolts
        InputRange4=TenVolts
        InputRange5=TenVolts
        InputRange6=TenVolts
        InputRange7=TenVolts
        InputRange8=TenVolts
        InputRange9=TenVolts
        InputRange10=TenVolts
        InputRange11=TenVolts
        Direction0=Input
        Direction1=Input
        Direction2=Input
        Direction3=Input
        Direction4=Input
        Direction5=Input
        Direction6=Input
        Direction7=Input
        Direction8=Input
        Direction9=Input
        Direction10=Input
        Direction11=Input
      DigitalIO(DeviceName=BreakoutBoard/DigitalIO, DeviceAddress=7, Enable=true)
      ClockOutput(DeviceName=BreakoutBoard/OutputClock, DeviceAddress=5, ClockGate=false, Frequency=1000000, DutyCycle=50, Delay=0)
      HarpInput(DeviceName=BreakoutBoard/HarpSyncInput, DeviceAddress=12, Enable=true, Source=ClockAdapter)
      MemoryMonitor(DeviceName=BreakoutBoard/MemoryMonitor, DeviceAddress=10, Enable=true, SamplesPerSecond=10)
    -> OpenEphys.Onix1.StartAcquisition(ReadSize=2048, WriteSize=2048)

    OpenEphys.Onix1.AnalogInput(DeviceName=BreakoutBoard/AnalogIO, BufferSize=100, DataType=S16)
    -> PublishSubject OnixAnalog

    BehaviorSubject<System.Int32> OnixDigitalCommands
    -> OpenEphys.Onix1.DigitalOutput(DeviceName=BreakoutBoard/DigitalIO)

    OpenEphys.Onix1.DigitalInput(DeviceName=BreakoutBoard/DigitalIO)
    -> PublishSubject OnixDigital

    OpenEphys.Onix1.HarpSyncInputData(DeviceName=BreakoutBoard/HarpSyncInput)
    -> PublishSubject OnixHarp

    IntProperty(Value=0)
    -> MulticastSubject OnixDigitalCommands

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=5)
    -> BehaviorSubject SyncDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject SyncPulseState

    ExternalizedMapping(Filter(DisplayName=StartSyncKey, Category=ONIX))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> Unit
    -> Take(Count=1)
    -> AsyncSubject InitSync
    -> StringProperty(Value="Sync signal started")
    -> MulticastSubject ExperimentEvents

    SubscribeSubject InitSync
    -> SelectMany DoSyncPulse
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Trigger

        SubscribeSubject Trigger => #3
        SubscribeSubject SyncDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT2.337S) => #8
        SubscribeSubject SyncPulseState
        -> BitwiseNot => #10
        #8, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject SyncPulseState
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> MulticastSubject OnixDigitalCommands
        -> WorkflowOutput
    -> Take(Count=1)
    -> Repeat

ExternalizedMapping(HomePlatform, StepCCW, StepCW)
-> GroupWorkflow H2Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H2Commands
    -> Harp.VestibularH2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11)
    -> PublishSubject H2Events
    -> WorkflowOutput

    SubscribeSubject H2Events
    -> Harp.VestibularH2.FilterRegister(FilterType=Include, Register=Harp.VestibularH2.Encoder)
    -> Harp.VestibularH2.Parse(Register=Harp.VestibularH2.TimestampedEncoder)
    -> MemberSelector(Selector=Value)
    -> PublishSubject RotaryEncoder

    SubscribeSubject H2Events
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=39))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=false))
    -> MemberSelector(Selector=Value)
    -> PublishSubject HallSensor

    BooleanProperty(Value=false)
    -> MulticastSubject PlatformHomed

    BehaviorSubject<System.Boolean> PlatformHomed

    BehaviorSubject<System.Reactive.Unit> HomePlatform
    -> CreateObservable HomePlatform
        SubscribeSubject HallSensor
        -> LessThan(Operand=WorkflowProperty<System.Int16>(Value=200))
        -> Condition Home
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject PlatformHomed
        -> WorkflowOutput

        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject PlatformHomed
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=200))
        -> MulticastSubject H2Commands
    -> Switch

    BehaviorSubject<System.Int32> StepPlatform
    -> SelectMany StepPlatform
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject StepPulseInterval

        SubscribeSubject StepPulseInterval
        -> PropertyMapping(ImmediatePulses)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=500))
        -> MulticastSubject H2Commands
        -> Delay(DueTime=PT0.2S)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=HomePlatform, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Back H Shift", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject HomePlatform

    ExternalizedMapping(Filter(DisplayName=StepCCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Space Prior PageUp Home Left Shift", SuppressRepetitions=false)
    -> IntProperty(Value=500)
    -> MulticastSubject StepPlatform

    ExternalizedMapping(Filter(DisplayName=StepCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Shift", SuppressRepetitions=false)
    -> IntProperty(Value=-500)
    -> MulticastSubject StepPlatform

    SubscribeSubject SessionSettings => #34
    -> Delay(DueTime=PT0.5S) => #35
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableMotor)) => #36
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableAnalogInput)) => #37
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableEncoder)) => #38
    #35 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=ResetEncoder)) => #39
    #34 -> Delay(DueTime=PT1S) => #40
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableMotor)) => #41
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableAnalogInput)) => #42
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableEncoder)) => #43
    #34 -> MemberSelector(Selector=MotorSettings.NominalPulseInterval)
    -> PropertyMapping(NominalPulseInterval) => #45
    #45, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateNominalPulseIntervalPayload(NominalPulseInterval=200)) => #46
    #34 -> MemberSelector(Selector=MotorSettings.InitialPulseInterval)
    -> PropertyMapping(InitialPulseInterval) => #48
    #48, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateInitialPulseIntervalPayload(InitialPulseInterval=200)) => #49
    #34 -> MemberSelector(Selector=MotorSettings.PulseStepInterval)
    -> PropertyMapping(PulseStepInterval) => #51
    #51, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulseStepIntervalPayload(PulseStepInterval=2)) => #52
    #34 -> MemberSelector(Selector=MotorSettings.PulsePeriod)
    -> PropertyMapping(PulsePeriod) => #54
    #54, #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulsePeriodPayload(PulsePeriod=10)) => #55
    #36, #37, #38, #39, #41, #42, #43, #46, #49, #52, #55 -> Merge
    -> MulticastSubject H2Commands

ExternalizedMapping(StartCamerasKey, StopCamerasKey)
-> GroupWorkflow CameraControl
    SubscribeSubject SessionSettings => #0
    -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #2
    #0 -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #4
    #0 -> Delay(DueTime=PT1S) => #5
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraFrequency1)
    -> PropertyMapping(Cam0TriggerFrequency) => #8
    #5, #8 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerFrequencyPayload(Cam0TriggerFrequency=100)) => #9
    #0 -> Delay(DueTime=PT1S) => #10
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraExposure1)
    -> PropertyMapping(Cam0TriggerDuration) => #13
    #10, #13 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerDurationPayload(Cam0TriggerDuration=5000)) => #14
    #0 -> Delay(DueTime=PT1S) => #15
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraFrequency1)
    -> PropertyMapping(Cam1TriggerFrequency) => #18
    #15, #18 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerFrequencyPayload(Cam1TriggerFrequency=100)) => #19
    #0 -> Delay(DueTime=PT1S) => #20
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraExposure2)
    -> PropertyMapping(Cam1TriggerDuration) => #23
    #20, #23 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerDurationPayload(Cam1TriggerDuration=5000)) => #24
    #2, #4, #9, #14, #19, #24 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StartCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false) => #28
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam0)) => #29
    #28 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam1)) => #30
    #29, #30 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StopCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift", SuppressRepetitions=false) => #34
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #35
    #34 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #36
    #35, #36 -> Merge
    -> MulticastSubject H1Commands

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam0Event) => #40
    ExternalizedMapping(SerialNumber(DisplayName=Camera1SerialNumber, Category=CameraControl)) => #41
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraGain1)
    -> PropertyMapping(Gain) => #44
    #40, #41, #44 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=21205223, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
    -> PublishSubject Camera1

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam1Event) => #48
    ExternalizedMapping(SerialNumber(DisplayName=Camera2SerialNumber, Category=CameraControl)) => #49
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraSettings.CameraGain2)
    -> PropertyMapping(Gain) => #52
    #48, #49, #52 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=22085343, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
    -> PublishSubject Camera2

ExternalizedMapping(StartLoggingKey)
-> GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:/TrialLogicTestData/, ChunkSize=1)

    SubscribeSubject H1Events => #4
    SubscribeSubject StartLoggingKey => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH1, Heartbeats=H1Events, ClosingDuration=nil)

    SubscribeSubject H2Events => #8
    SubscribeSubject StartLoggingKey => #9
    #8, #9 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH2, Heartbeats=H2Events, ClosingDuration=nil)

    SubscribeSubject Camera1 => #12
    SubscribeSubject StartLoggingKey => #13
    #12, #13 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData1, FrameRate=50)

    SubscribeSubject Camera2 => #16
    SubscribeSubject StartLoggingKey => #17
    #16, #17 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData2, FrameRate=50)

    SubscribeSubject SessionSettings => #20
    SubscribeSubject H1Events => #21
    #20, #21 -> SubscribeWhen => #22
    SubscribeSubject StartLoggingKey => #23
    #22, #23 -> SubscribeWhen
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject OnixAnalog => #28
    -> WindowCount(Count=360000, Skip=nil) => #29
    SubscribeSubject StartLoggingKey => #30
    #29, #30 -> SubscribeWhen => #31
    -> CreateObservable AnalogData
        WorkflowInput Source1
        -> MemberSelector(Selector=AnalogData)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogData)
    #31 -> CreateObservable AnalogClock
        WorkflowInput Source1
        -> MemberSelector(Selector=Clock)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogClock)
    #31 -> CreateObservable AnalogHubSyncCounter
        WorkflowInput Source1
        -> MemberSelector(Selector=HubClock)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogBinaryData.bonsai, LogName=OnixAnalogHubSyncCounter)
    #28 -> ElementIndex => #38
    SubscribeSubject StartLoggingKey => #39
    #38, #39 -> SubscribeWhen
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=OnixAnalogFrameCount, Selector="Seconds,Value.Index")

    SubscribeSubject OnixHarp
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #44
    SubscribeSubject StartLoggingKey => #45
    #44, #45 -> SubscribeWhen
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=H1Events
      ClosingDuration=nil
      LogName=OnixHarp
      Selector="Seconds,Value.Clock,Value.HubClock,Value.HarpTime"

    SubscribeSubject OnixDigital
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
          it.Clock as Clock,
          it.HubClock as HubClock,
          Convert.ToInt32(it.DigitalInputs) as DigitalInputs,
          Convert.ToInt32(it.Buttons) as Buttons
        )
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #50
    SubscribeSubject StartLoggingKey => #51
    #50, #51 -> SubscribeWhen
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=H1Events
      ClosingDuration=nil
      LogName=OnixDigital
      Selector="Seconds,Value.Clock,Value.HubClock,Value.DigitalInputs,Value.Buttons"

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #55
    SubscribeSubject StartLoggingKey => #56
    #55, #56 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=ExperimentEvents, Selector="Seconds,Value")

    ExternalizedMapping(Filter(DisplayName=StartLoggingKey, Category=LoggingControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false)
    -> PublishSubject StartLoggingKey
    -> StringProperty(Value="Logging started")
    -> MulticastSubject ExperimentEvents

SubscribeSubject FlowSensor1 => #29
-> MemberSelector(Selector=X) => #30
#29 -> MemberSelector(Selector=Y) => #31
#30, #31 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as X,
      it.Item2 as Y
    )
-> PublishSubject MovementDelta

Disable Bonsai.Windows.Input.MouseWheel
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #36
  Expression: Convert.ToInt16(it)
-> Disable Multiply(Operand=WorkflowProperty<System.Int16>(Value=25)) => #37
#36 -> Disable Multiply(Operand=WorkflowProperty<System.Int16>(Value=25)) => #38
#37, #38 -> Disable Zip
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as X,
      it.Item2 as Y
    )
-> Disable PublishSubject MovementDelta
