WorkflowBuilder(Version=2.8.1)
GroupWorkflow NewScaleControl
    BehaviorSubject<System.Boolean> MotorRunning

    BooleanProperty(Value=false)
    -> MulticastSubject MotorRunning

    PublishSubject<System.Double> TargetPosition

    SubscribeSubject TargetPosition
    -> NewScale.NstDevice => #5
      Axis=0
      IgnoreBonsaiCommands=false
      ZeroPosition=6886.5
      PositioningSpeed=2000
      PositioningAcceleration=10000
      PositioningCutoffSpeed=2000
      PositioningAbsoluteTarget=15000
      UpHotkey=Up
      DownHotkey=Down
      ControlSpeed=400
      ControlAcceleration=10000
      ControlCutoffSpeed=400
      ControlSteps=100
    -> MemberSelector(Selector=Position)
    -> MulticastSubject CurrentPosition
    #5 -> MemberSelector(Selector=MotorStatus) => #8
    -> HasFlag(Operand=WorkflowProperty<NewScale.MotorStatus>(Value=MotorRunning))
    -> MulticastSubject MotorRunning
    #8 -> HasFlag(Operand=WorkflowProperty<NewScale.MotorStatus>(Value=Stalled))

    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> DoubleProperty(Value=-500) => #13
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> DoubleProperty(Value=500) => #15
    #13, #15 -> Merge
    -> Accumulate
    -> MulticastSubject TargetPosition

    PublishSubject<System.Double> CurrentPosition

Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=4096, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device => #2
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454412891
    PerformReadCheck=true
    CalibrationFolderPath=C:\Users\Admin\Desktop\19454412891-20230913T100948Z-001\19454412891
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
          NeuropixelsV1GainCorrection
            APx50Correction=1.035817
            APx125Correction=1.035817
            APx250Correction=1.041123
            APx500Correction=1.010107
            APx1000Correction=1.01971
            APx1500Correction=1.01971
            APx2000Correction=1.01971
            APx3000Correction=1.01971
            LFPx50Correction=0.975021
            LFPx125Correction=0.975021
            LFPx250Correction=0.978522
            LFPx500Correction=0.950075
            LFPx1000Correction=0.964589
            LFPx1500Correction=0.964589
            LFPx2000Correction=0.964589
            LFPx3000Correction=0.964589
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    ADCs
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=5, Coarse=0, Fine=0, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=512)
      NeuropixelsV1ADC(CompP=8, CompN=22, Slope=2, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=1, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=0, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=10, CompN=20, Slope=4, Coarse=1, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=4, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=1, Threshold=512)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=15, CompN=15, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=6, Coarse=0, Fine=1, Cfix=1, Offset=3, Threshold=514)
  RequireSNMatch=false
  BlockSize=10
-> MemberSelector(Selector=FrameCounter)
SubscribeSubject CurrentPosition => #4
#2 -> MemberSelector(Selector=Clock)
-> Index(Operand=IntProperty(Value=0)) => #6
#4, #6 -> WithLatestFrom
#2 -> MemberSelector(Selector=LFPData)
#2 -> MemberSelector(Selector=SpikeData)
-> PublishSubject SpikeData

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=probe_image
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=InsertionWorkflow\quad.vert
      FragmentShader=InsertionWorkflow\probe_image.frag
-> Bonsai.Resources.LoadResources

Bonsai.ONIX.MemoryUsageDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10), EnableStream=true, UpdateHz=100)
-> MemberSelector(Selector=MemoryUsagePercentage)

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=1, Bottom=0, Top=1) => #17
SubscribeSubject SpikeData => #18
#17, #18 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=probe_image, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
