<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ONIContext">
          <p1:ContextConfiguration>
            <p1:Slot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:Slot>
            <p1:ReadSize>2048</p1:ReadSize>
            <p1:WriteSize>2048</p1:WriteSize>
          </p1:ContextConfiguration>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AnalogIODevice">
          <p1:DeviceAddress>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>6</p1:Address>
          </p1:DeviceAddress>
          <p1:BlockSize>50</p1:BlockSize>
          <p1:DataType>S16</p1:DataType>
          <p1:EnableStream>true</p1:EnableStream>
          <p1:InputRange00>TenVolts</p1:InputRange00>
          <p1:InputRange01>TenVolts</p1:InputRange01>
          <p1:InputRange02>TenVolts</p1:InputRange02>
          <p1:InputRange03>TenVolts</p1:InputRange03>
          <p1:InputRange04>TenVolts</p1:InputRange04>
          <p1:InputRange05>TenVolts</p1:InputRange05>
          <p1:InputRange06>TenVolts</p1:InputRange06>
          <p1:InputRange07>TenVolts</p1:InputRange07>
          <p1:InputRange08>TenVolts</p1:InputRange08>
          <p1:InputRange09>TenVolts</p1:InputRange09>
          <p1:InputRange10>TenVolts</p1:InputRange10>
          <p1:InputRange11>TenVolts</p1:InputRange11>
          <p1:Direction00>Input</p1:Direction00>
          <p1:Direction01>Input</p1:Direction01>
          <p1:Direction02>Input</p1:Direction02>
          <p1:Direction03>Input</p1:Direction03>
          <p1:Direction04>Input</p1:Direction04>
          <p1:Direction05>Input</p1:Direction05>
          <p1:Direction06>Input</p1:Direction06>
          <p1:Direction07>Input</p1:Direction07>
          <p1:Direction08>Input</p1:Direction08>
          <p1:Direction09>Input</p1:Direction09>
          <p1:Direction10>Input</p1:Direction10>
          <p1:Direction11>Input</p1:Direction11>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Data</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>0</dsp:StartRow>
          <dsp:EndRow>1</dsp:EndRow>
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PhotoDiode1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>1</dsp:StartRow>
          <dsp:EndRow>2</dsp:EndRow>
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PhotoDiode2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>7680</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>LightGrey</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>200</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>200</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedTime</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawQuad</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ColorVal</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ColorVal</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorG" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ColorVal</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>16</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="LoggingDirectory" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Path" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>C:\Users\Admin\source\repos\vestibular-vr\Data\Benchmarks\RoundTrip_MatroxOnly</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value + "/Data" + it.TimeStamp.ToString("yyyy_MM_dd_HH_mm_ss") + "/"</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PhotoDiode1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PhotoDiode1.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\Users\Admin\source\repos\vestibular-vr\Data\Benchmarks\RoundTrip_MatroxOnly/Data2023_11_30_11_40_25/\PhotoDiode1.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PhotoDiode2</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PhotoDiode2.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\Users\Admin\source\repos\vestibular-vr\Data\Benchmarks\RoundTrip_MatroxOnly/Data2023_11_30_11_40_25/\PhotoDiode2.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="12" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="19" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>PhotoDiode1</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PhotoDiode2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>3500</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1.0 - Convert.ToSingle(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ColorVal</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="MemberSelector">
        <Selector>TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PhotoDiode1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalMilliseconds</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>