<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:vh1="clr-namespace:Harp.VestibularH1;assembly=Harp.VestibularH1"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExperimentEvents</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>3</viz:ColumnCount>
        <viz:RowCount>1</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionSettingsPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionSettingsPath" Category="Session Settings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>C:\Users\ONIX\source\ae-dev\vestibular-vr\src\vrDemo.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>7680</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Third</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageSequence">
                    <gl:Name>MotionCloud</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Python\vestibular-vr\test-cloud.mp4</gl:FileName>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                    <gl:FrameCount xsi:nil="true" />
                    <gl:StartPosition>0</gl:StartPosition>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>1</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbabilitySampling</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>ExperimentEvents</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Session start</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ExperimentEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visual Mapping</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-180</Left>
              <Right>180</Right>
              <Bottom>-90</Bottom>
              <Top>90</Top>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <ClearColor>Gray</ClearColor>
              <Width>2048</Width>
              <Height>2048</Height>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <FaceSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FrontView</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Width" />
                    <Property Name="Height" />
                    <Property Name="Rotation" />
                    <Property Name="Translation" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>30</Width>
                    <Height>20</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>-10</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RightView</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Width" />
                    <Property Name="Height" />
                    <Property Name="Rotation" />
                    <Property Name="Translation" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>30</Width>
                    <Height>20</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>-90.000002504478161</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>10</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.25</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BackView</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Width" />
                    <Property Name="Height" />
                    <Property Name="Rotation" />
                    <Property Name="Translation" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>30</Width>
                    <Height>20</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>180.00000500895632</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>10</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.5</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LeftView</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Width" />
                    <Property Name="Height" />
                    <Property Name="Rotation" />
                    <Property Name="Translation" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>30</Width>
                    <Height>20</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>90.000002504478161</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>-10</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.75</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Trial Logic</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>H1Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>H1Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vh1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM10</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="vh1:OpticalTrackingRead" />
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedOpticalTrackingRead" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensor</scr:Name>
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensor</scr:Name>
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor2</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="7" To="15" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="11" Label="Source2" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="17" Label="Source2" />
            <Edge From="16" To="17" Label="Source3" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartCamerasKey" />
        <Property Name="StopCamerasKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam0TriggerFrequencyPayload">
                <vh1:Cam0TriggerFrequency>100</vh1:Cam0TriggerFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam0TriggerDurationPayload">
                <vh1:Cam0TriggerDuration>500</vh1:Cam0TriggerDuration>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam1TriggerFrequencyPayload">
                <vh1:Cam1TriggerFrequency>100</vh1:Cam1TriggerFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam1TriggerDurationPayload">
                <vh1:Cam1TriggerDuration>500</vh1:Cam1TriggerDuration>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartCamerasKey" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel A B C Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StartCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StartCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StopCamerasKey" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton D Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedCam0Event" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="Camera1SerialNumber" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>21205223</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedCam1Event" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="Camera2SerialNumber" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>22085343</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera2</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="13" Label="Source5" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source6" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>D:/TrialLogicTestData/</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>HarpData</LogName>
              <Heartbeats>H1Events</Heartbeats>
              <ClosingDuration xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats>H1Events</Heartbeats>
              <ClosingDuration xsi:nil="true" />
              <LogName>VideoData1</LogName>
              <FrameRate>50</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera2</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats>H1Events</Heartbeats>
              <ClosingDuration xsi:nil="true" />
              <LogName>VideoData2</LogName>
              <FrameRate>50</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>SessionSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FlowSensor1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MovementDelta</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>