<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey A P Q Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(Q)StartCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(W)StopCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(A)StartCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>2</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(S)StopCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 A D E Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(E)ToogleValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton ShiftKey Menu B P R Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(R)PulseValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton D Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(D)ToogleValve1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton MButton XButton2 B D F Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>(F)PulseValve1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigValvesTo250msPulse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>41</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>250</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel A B C Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigCams</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Frequency" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Pulse Duration" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>34</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>35</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>1000</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>37</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>1000</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="7" Label="Source3" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM28</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OpticalTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>46</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
it.Item1 as Value,
it.Item2 as Timestamp)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="10" Label="Source3" />
            <Edge From="7" To="10" Label="Source4" />
            <Edge From="8" To="10" Label="Source5" />
            <Edge From="9" To="10" Label="Source6" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Lick.bonsai">
        <Value_x0020_Bit>2</Value_x0020_Bit>
        <TriggerBit>32</TriggerBit>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Lick.bonsai">
        <Value_x0020_Bit>1</Value_x0020_Bit>
        <TriggerBit>16</TriggerBit>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera0TriggerEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Address" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>32</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>U8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera1TriggerEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Address" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>33</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>U8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="24" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="24" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="24" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="24" Label="Source4" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source5" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source6" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="30" Label="Source1" />
      <Edge From="25" To="31" Label="Source1" />
      <Edge From="25" To="32" Label="Source1" />
      <Edge From="25" To="34" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>