<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="LeftPhaseInitial" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>LeftPhaseInitial</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RightPhaseInitial" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>180</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RightPhaseInitial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LeftPhaseProgression</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Phase" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>-90</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>180</ExtentX>
        <ExtentY>60</ExtentY>
        <SpatialFrequency>0.1</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>-7746.335</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>2</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>20</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RightPhaseProgression</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Phase" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>90</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>180</ExtentX>
        <ExtentY>60</ExtentY>
        <SpatialFrequency>0.1</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>18059.5742</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>2</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>20</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT0.01S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>LeftPhaseInitial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="FloatProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LeftPhaseProgression</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>RightPhaseInitial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="FloatProperty">
          <Value>180</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RightPhaseProgression</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width>2048</Width>
        <Height>2048</Height>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrontView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RightView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BackView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>180.00000500895632</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LeftView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="24" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="33" To="36" Label="Source1" />
      <Edge From="33" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>