<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>7680</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Maximized</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>shelter</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\shelter.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageCubemap">
              <gl:Name>cube</gl:Name>
              <gl:FaceSize xsi:nil="true" />
              <gl:InternalFormat>Rgb</gl:InternalFormat>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:PositiveX>Textures\texted\right.png</gl:PositiveX>
              <gl:NegativeX>Textures\texted\left.png</gl:NegativeX>
              <gl:PositiveY>Textures\texted\ceil.png</gl:PositiveY>
              <gl:NegativeY>Textures\texted\floor.png</gl:NegativeY>
              <gl:PositiveZ>Textures\texted\back.png</gl:PositiveZ>
              <gl:NegativeZ>Textures\texted\front.png</gl:NegativeZ>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Horizontal</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>Brown</gl:Name>
              <gl:Width>600</gl:Width>
              <gl:Height>800</gl:Height>
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>resources\Brown.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>uv_box</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Nearest</gl:MinFilter>
              <gl:MagFilter>Nearest</gl:MagFilter>
              <gl:FileName>Textures\uv.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>CubeMap</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>TextureCubeMap</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>resources\CubeMap.vert</gl:VertexShader>
              <gl:FragmentShader>BonVision:Shaders.SphereMap.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>monkey</gl:Name>
              <gl:FileName>resources\Suzanne.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>cube</gl:Name>
              <gl:FileName>resources\cube.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>cricket</gl:Name>
              <gl:FileName>resources\cricket.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>box</gl:Name>
              <gl:FileName>resources\box.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw3DStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\RenderCubeMapTexture.bonsai">
        <CubemapTexture>cube</CubemapTexture>
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>cube</MeshName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScreenCalibration.bonsai">
        <IntrinsicsFileName>Calibration\left_intrinsics.yml</IntrinsicsFileName>
        <ExtrinsicsFileName>Calibration\left_extrinsics.yml</ExtrinsicsFileName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <NearClip>1E-05</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Light>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Draw3DStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LeftView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="DisplayWidth" />
                <Property Name="Height" Selector="DisplayHeight" />
                <Property Name="Rotation" Selector="Rotation" />
                <Property Name="Translation" Selector="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.543744</Width>
              <Height>0.302616</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-0.3</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScreenCalibration.bonsai">
        <IntrinsicsFileName>Calibration\front_intrinsics.yml</IntrinsicsFileName>
        <ExtrinsicsFileName>Calibration\front_extrinsics.yml</ExtrinsicsFileName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrontView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="DisplayWidth" />
                <Property Name="Height" Selector="DisplayHeight" />
                <Property Name="Rotation" Selector="Rotation" />
                <Property Name="Translation" Selector="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.543744</Width>
              <Height>0.302616</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-0.3</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScreenCalibration.bonsai">
        <IntrinsicsFileName>Calibration\right_intrinsics.yml</IntrinsicsFileName>
        <ExtrinsicsFileName>Calibration\right_extrinsics.yml</ExtrinsicsFileName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RightView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="DisplayWidth" />
                <Property Name="Height" Selector="DisplayHeight" />
                <Property Name="Rotation" Selector="Rotation" />
                <Property Name="Translation" Selector="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.543744</Width>
              <Height>0.302616</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0.3</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScreenCalibration.bonsai">
        <IntrinsicsFileName>Calibration\back_intrinsics.yml</IntrinsicsFileName>
        <ExtrinsicsFileName>Calibration\back_extrinsics.yml</ExtrinsicsFileName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BackView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="DisplayWidth" />
                <Property Name="Height" Selector="DisplayHeight" />
                <Property Name="Rotation" Selector="Rotation" />
                <Property Name="Translation" Selector="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.543744</Width>
              <Height>0.302616</Height>
              <Rotation>
                <X>0</X>
                <Y>180</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0.3</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw3DStim</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="12" To="15" Label="Source2" />
      <Edge From="12" To="17" Label="Source2" />
      <Edge From="12" To="19" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>