<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Response</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>responses.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>Led</rx:Name>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Output</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed>90</num:Seed>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>1</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Trials</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Led</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectTrialType</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trials</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Go</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GoResponse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Response</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Go Trial Start</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateIndicator</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Hit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Led</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>6</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Reward</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateIndicator</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NoGo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>NoGoResponse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Response</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>NoGo Trial Start</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateIndicator</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>CorrectRejection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Pass</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Pass</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateIndicator</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>FalseAlarm</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Timeout</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Timeout</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateIndicator</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Led</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>StateIndicator</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="18" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="25" Label="Source1" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="25" Label="Source3" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>