<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>22085343</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\eye movement_test\20240320_test frame rate_343.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\eye movement_test\20240320_test frame rate_343.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21205223</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\eye movement_test\20240320_test frame rate_223.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\eye movement_test\20240320_test frame rate_223.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>