<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>H1Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>H1Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Optical Flow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address>46</harp:Address>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>TimestampedS16</harp:PayloadType>
                      <harp:IsArray>true</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FlowSensor1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>FlowSensorMapping</scr:Name>
                    <scr:Description />
                    <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FlowSensor1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FlowSensor2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>FlowSensorMapping</scr:Name>
                    <scr:Description />
                    <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FlowSensor2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Lick State</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address>39</harp:Address>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>TimestampedU8</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LickState1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>FilterLick1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseAnd">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>16</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>16</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickState1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LickState2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>FilterLick2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseAnd">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>32</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>32</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickState2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>H2Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>H2Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Encoder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address>38</harp:Address>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>S16</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Encoder</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialise</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>2</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>8</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>32</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>64</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>1</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>4</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>16</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>64</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PosCounter</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="10" Label="Source2" />
            <Edge From="3" To="10" Label="Source3" />
            <Edge From="4" To="10" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="10" Label="Source5" />
            <Edge From="7" To="10" Label="Source6" />
            <Edge From="8" To="10" Label="Source7" />
            <Edge From="9" To="10" Label="Source8" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FlowSensor1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.X</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>PosCounter</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Divide">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Payload" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>33</harp:Address>
                  <harp:PayloadType>S32</harp:PayloadType>
                  <harp:Value>0</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>PosCounter</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisableKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisableAll</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="DisableKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>2</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>8</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>32</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>32</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>64</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="6" Label="Source3" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>