<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM6</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialise</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>64</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Counter</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisableKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisableAll</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="DisableKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>2</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>64</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="6" Label="Source3" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="EnableKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EnableAll</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="EnableKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>E</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>64</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="6" Label="Source3" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseWheel" />
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Counter</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Encoder</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Events</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:FilterMessage">
                  <harp:Address>38</harp:Address>
                  <harp:MessageType>Event</harp:MessageType>
                </Combinator>
              </Expression>
              <Expression xsi:type="harp:Parse">
                <harp:Type>S16</harp:Type>
                <harp:IsArray>false</harp:IsArray>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Multiply">
          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
            <Value>1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(float)
def process(value):
  return float(value)</ipy:Script>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Payload" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>33</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
                <harp:Payload>-120</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>Counter</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>22</cv:X>
            <cv:Y>237</cv:Y>
            <cv:Width>250</cv:Width>
            <cv:Height>243</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>