WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device => #1
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=false
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454426636
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\ONIX\Desktop\invented_1945442663
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
          NeuropixelsV1GainCorrection
            APx50Correction=1.037467
            APx125Correction=1.037467
            APx250Correction=1.042076
            APx500Correction=1.010664
            APx1000Correction=1.020544
            APx1500Correction=1.020544
            APx2000Correction=1.020544
            APx3000Correction=1.020544
            LFPx50Correction=0.969143
            LFPx125Correction=0.969143
            LFPx250Correction=0.974059
            LFPx500Correction=0.946353
            LFPx1000Correction=0.961656
            LFPx1500Correction=0.961656
            LFPx2000Correction=0.961656
            LFPx3000Correction=0.961656
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    ADCs
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=3, Coarse=1, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=9, CompN=21, Slope=3, Coarse=2, Fine=2, Cfix=1, Offset=5, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=2, Fine=2, Cfix=0, Offset=4, Threshold=513)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=1, Coarse=3, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=2, Coarse=3, Fine=2, Cfix=1, Offset=2, Threshold=511)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=2, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=17, CompN=13, Slope=5, Coarse=0, Fine=0, Cfix=0, Offset=3, Threshold=512)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=1, Coarse=3, Fine=2, Cfix=1, Offset=4, Threshold=512)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=0, Fine=0, Cfix=0, Offset=3, Threshold=512)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=0, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=3, Coarse=2, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=0, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=5, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=0, Fine=2, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=5, Coarse=0, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=3, Coarse=2, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=0, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=6, Coarse=0, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=5, Coarse=0, Fine=1, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=3, Coarse=2, Fine=0, Cfix=1, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=5, Coarse=0, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=5, Coarse=0, Fine=3, Cfix=1, Offset=2, Threshold=514)
  RequireSNMatch=true
  BlockSize=120
-> MemberSelector(Selector=SpikeData) => #2
-> Bonsai.Dsp.MatrixWriter(Path=D:\NP1.0_tests\spikedata, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=LFPData) => #4
-> Bonsai.Dsp.MatrixWriter(Path=D:\NP1.0_tests\lfpdata, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=FrameCounter)
-> Bonsai.Dsp.MatrixWriter(Path=D:\NP1.0_tests\framecounter, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=SpikeDataClock)
-> Bonsai.Dsp.MatrixWriter(Path=D:\NP1.0_tests\spikedataclock, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=LFPDataClock)
-> Bonsai.Dsp.MatrixWriter(Path=D:\NP1.0_tests\lfpdataclock, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=1, Bottom=0, Top=1) => #13
#13, #2 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=lfp_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=0.5)
#13, #4 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=spike_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=1, Height=0.5)

Bonsai.ONIX.HeadstagePortControlDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=2), EnableStream=true, LinkVoltage=6.3, GPO1=false)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=D:\NP1.0_tests\headstageportcontrol_riffa02_np10.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=lfp_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=spike_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
-> Bonsai.Resources.LoadResources
