WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2584, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1eDevice
  DeviceAddress(HardwareSlot(Driver="", Index=0), Address=nil)
  BlockSize=30
  EnableStream=false
  Configuration
    DeviceAddress(HardwareSlot(Driver="", Index=0), Address=nil)
    ConfigProbeSN=nil
    PerformReadCheck=false
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
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    ADCs
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
  RequireSNMatch=true
