WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2584, WriteSize=2048))
OpenEphys.Sockets.Bonsai.TcpServer(Name=tcp, Port=9001, Address=localhost)

Bonsai.ONIX.NeuropixelsV1Device => #2
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=512)
    ConfigProbeSN=19454412662
    PerformReadCheck=true
    CalibrationFolderPath=C:\Users\ONIX\Desktop\19454412662
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=TIP
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
      NeuropixelsV1Channel
        Index=4
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
      NeuropixelsV1Channel
        Index=5
        Bank=ZERO
        APGain=x1000
        LFPGain=x125
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
          NeuropixelsV1GainCorrection
            APx50Correction=1.03534
            APx125Correction=1.03534
            APx250Correction=1.040627
            APx500Correction=1.011068
            APx1000Correction=1.023845
            APx1500Correction=1.023845
            APx2000Correction=1.023845
            APx3000Correction=1.023845
            LFPx50Correction=0.973306
            LFPx125Correction=0.973306
            LFPx250Correction=0.978105
            LFPx500Correction=0.950618
            LFPx1000Correction=0.966228
            LFPx1500Correction=0.966228
            LFPx2000Correction=0.966228
            LFPx3000Correction=0.966228
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    ADCs
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=3, Coarse=1, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=1, Coarse=3, Fine=0, Cfix=8, Offset=4, Threshold=513)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=1, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=10, CompN=20, Slope=5, Coarse=0, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=512)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=1, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=1, Coarse=3, Fine=0, Cfix=1, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=2, Coarse=3, Fine=0, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=3, Coarse=1, Fine=2, Cfix=8, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=0, Cfix=0, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=12, CompN=18, Slope=4, Coarse=2, Fine=1, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=1, Fine=2, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=3, Coarse=2, Fine=1, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=4, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=512)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=2, Coarse=3, Fine=2, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=2, Fine=1, Cfix=1, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=2, Coarse=3, Fine=1, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=1, Coarse=3, Fine=2, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=1, Coarse=3, Fine=2, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=1, Coarse=3, Fine=1, Cfix=1, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=1, Coarse=3, Fine=2, Cfix=8, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=1, Coarse=3, Fine=1, Cfix=1, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=1, Coarse=3, Fine=1, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=0, Fine=1, Cfix=0, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=1, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=17, CompN=13, Slope=4, Coarse=2, Fine=3, Cfix=0, Offset=2, Threshold=514)
  RequireSNMatch=false
  BlockSize=120
-> MemberSelector(Selector=SpikeData) => #3
-> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1, int=2, int=3))
-> Disable Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1, Shift=0)
-> Disable Bonsai.Dsp.ConvertScale(Depth=F64, Scale=1.171875, Shift=0)
-> Disable Bonsai.Dsp.ConvertScale(Depth=U16, Scale=1, Shift=0)
-> OpenEphys.Sockets.Bonsai.SendMatOverSocket(Connection=tcp)
Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=1, Bottom=0, Top=1) => #10
#10, #3 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=lfp_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=0.5)
#2 -> MemberSelector(Selector=LFPData) => #16
#10, #16 -> WithLatestFrom
-> MemberSelector(Selector=Item2)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=spike_material, TextureUniformName=uTexture)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=1, Height=0.5)

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=lfp_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=spike_material
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
-> Bonsai.Resources.LoadResources
