<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>H1Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM10</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>H1Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>H1Events</Name>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:FilterRegisterAddress">
          <harp:Address>47</harp:Address>
        </harp:Register>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>H1Events</Name>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:FilterRegisterAddress">
          <harp:Address>46</harp:Address>
        </harp:Register>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>TimestampedS16</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>FlowSensor</scr:Name>
        <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>FlowSensor</scr:Name>
        <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="9" To="16" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="13" Label="Source2" />
      <Edge From="12" To="13" Label="Source3" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="18" Label="Source2" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>