<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:CreateWindow">
            <gl:Width>640</gl:Width>
            <gl:Height>480</gl:Height>
            <gl:VSync>On</gl:VSync>
            <gl:SwapSync>false</gl:SwapSync>
            <gl:ClearColor>Black</gl:ClearColor>
            <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
            <gl:CursorVisible>true</gl:CursorVisible>
            <gl:Location xsi:nil="true" />
            <gl:WindowBorder>Resizable</gl:WindowBorder>
            <gl:WindowState>Normal</gl:WindowState>
            <gl:DisplayDevice>Primary</gl:DisplayDevice>
            <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
            <gl:TargetUpdateFrequency xsi:nil="true" />
            <gl:RenderState />
            <gl:GraphicsMode>
              <gl:ColorFormat>
                <gl:Red>8</gl:Red>
                <gl:Green>8</gl:Green>
                <gl:Blue>8</gl:Blue>
                <gl:Alpha>8</gl:Alpha>
              </gl:ColorFormat>
              <gl:Depth>16</gl:Depth>
              <gl:Stencil>0</gl:Stencil>
              <gl:Samples>0</gl:Samples>
              <gl:AccumulatorFormat>
                <gl:Red>0</gl:Red>
                <gl:Green>0</gl:Green>
                <gl:Blue>0</gl:Blue>
                <gl:Alpha>0</gl:Alpha>
              </gl:AccumulatorFormat>
              <gl:Buffers>2</gl:Buffers>
              <gl:Stereo>false</gl:Stereo>
            </gl:GraphicsMode>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:TextureResources">
            <gl:Textures>
              <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                <gl:Name>VideoData2_1904-01-01T01-00-00</gl:Name>
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</gl:FileName>
                <gl:FlipMode>Vertical</gl:FlipMode>
                <gl:FrameCount xsi:nil="true" />
                <gl:StartPosition>0</gl:StartPosition>
                <gl:BufferLength xsi:nil="true" />
              </gl:TextureConfiguration>
            </gl:Textures>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="res:LoadResources" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RenderFrame" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>DrawStimuli</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DrawStimuli</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
          <TextureName>VideoData2_1904-01-01T01-00-00</TextureName>
          <PlaybackRate>0</PlaybackRate>
          <Loop>false</Loop>
          <Angle>0</Angle>
          <ExtentX>1</ExtentX>
          <ExtentY>1</ExtentY>
          <LocationX>0</LocationX>
          <LocationY>0</LocationY>
          <ScaleX>1</ScaleX>
          <ScaleY>1</ScaleY>
          <ShiftX>0</ShiftX>
          <ShiftY>0</ShiftY>
          <Layer>0</Layer>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictSinglePose">
          <sleap:ModelFileName>C:\Users\ONIX\source\nora-dev\vestibular-vr\sleap_models_temp\frozen_graph.pb</sleap:ModelFileName>
          <sleap:TrainingConfig>C:\Users\ONIX\source\nora-dev\vestibular-vr\sleap_models_temp\training_config.json</sleap:TrainingConfig>
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</cv:FileName>
            <cv:PlaybackRate>9999</cv:PlaybackRate>
            <cv:StartPosition>0.5</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Threshold">
            <cv:ThresholdValue>145</cv:ThresholdValue>
            <cv:MaxValue>255</cv:MaxValue>
            <cv:ThresholdType>Binary</cv:ThresholdType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>3</cv:Width>
              <cv:Height>3</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>3</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>Tree</cv:Mode>
            <cv:Method>LinkRuns</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea>200</cv:MinArea>
            <cv:MaxArea>400</cv:MaxArea>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropCenter">
            <cv:Size>
              <cv:Width>192</cv:Width>
              <cv:Height>192</cv:Height>
            </cv:Size>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:PredictSinglePose">
            <sleap:ModelFileName>C:\Users\ONIX\Desktop\frozen_model_singleinstance_n403\frozen_graph.pb</sleap:ModelFileName>
            <sleap:TrainingConfig>C:\Users\ONIX\Desktop\frozen_model_singleinstance_n403\confmap_config.json</sleap:TrainingConfig>
            <sleap:PartMinConfidence xsi:nil="true" />
            <sleap:ScaleFactor xsi:nil="true" />
            <sleap:ColorConversion xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:GetBodyPart">
            <sleap:Name>eyeR</sleap:Name>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</cv:FileName>
            <cv:PlaybackRate>9999</cv:PlaybackRate>
            <cv:StartPosition>0.5</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:PredictPoses">
            <sleap:ModelFileName>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\frozen_graph.pb</sleap:ModelFileName>
            <sleap:TrainingConfig>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\confmap_config.json</sleap:TrainingConfig>
            <sleap:CentroidMinConfidence xsi:nil="true" />
            <sleap:PartMinConfidence xsi:nil="true" />
            <sleap:ScaleFactor xsi:nil="true" />
            <sleap:ColorConversion xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:GetBodyPart">
            <sleap:Name>head</sleap:Name>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</cv:FileName>
            <cv:PlaybackRate>1</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:PredictPoseIdentities">
            <sleap:ModelFileName>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\frozen_graph.pb</sleap:ModelFileName>
            <sleap:TrainingConfig>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\confmap_config.json</sleap:TrainingConfig>
            <sleap:CentroidMinConfidence xsi:nil="true" />
            <sleap:IdentityMinConfidence xsi:nil="true" />
            <sleap:PartMinConfidence xsi:nil="true" />
            <sleap:ScaleFactor xsi:nil="true" />
            <sleap:ColorConversion xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>D:\TrialLogicTestData\20241125_Cohort1_rotation\Vestibular_mismatch_day1\B6J2723-2024-12-12T15-44-01\VideoData2\VideoData2_1904-01-01T01-00-00.avi</cv:FileName>
            <cv:PlaybackRate>9999</cv:PlaybackRate>
            <cv:StartPosition>0.5</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:PredictCentroids">
            <sleap:ModelFileName>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\frozen_graph.pb</sleap:ModelFileName>
            <sleap:TrainingConfig>Z:\SLEAP_models\models\frozen_model_250212_142140.centered_instance.n=421\centroid_config.json</sleap:TrainingConfig>
            <sleap:CentroidMinConfidence xsi:nil="true" />
            <sleap:ScaleFactor xsi:nil="true" />
            <sleap:ColorConversion xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image,Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropCenter">
            <cv:Size>
              <cv:Width>150</cv:Width>
              <cv:Height>150</cv:Height>
            </cv:Size>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Name</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Position</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Confidence</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="18" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="40" Label="Source1" />
      <Edge From="37" To="41" Label="Source1" />
      <Edge From="37" To="42" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>